PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'data/sub1-%s_sub2-%s_task-%s_%s' % (expInfo['player1'], expInfo['player2'], expName, expInfo['date'])
  Experiment info = {'player1': '', 'player1av': '[1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20]', 'player2': '', 'player2av': '[20,19,18,17,16,15,14,13,12,11,10,9,8,7,6,5,4,3,2,1]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.1.2
  Window size (pixels) = [1920, 1080]
  expName = egghunt
  keyboardBackend = ioHub
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Routines
  Routine move_agent1
    KeyboardComponent resp_agent1
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      store = nothing
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    TextComponent instr_agent1
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text = PLAYER 1 TURN
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    CodeComponent change_agent1
      Code Type = Auto->JS
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      Begin Routine:
        agent1_jitter = np.random.uniform(1,1.5)
        thisExp.addData('agent1_jitter', agent1_jitter)

        instr_agent1.bold = True
        agent1_indicator_text.color = "red"

        # get grid coords and moves
        out_x, out_y, possiblemoves = convert_coords(agent1_pos[0], agent1_pos[1], agent='player1')

        # remove possible move if adjacent to another agent
        for this_move in possiblemoves:
            x_shift, y_shift = convert_moves(this_move)
            if [agent1_pos[0]+x_shift, agent1_pos[1]+y_shift] == chick1_pos:
                possiblemoves.remove(this_move)
            if [agent1_pos[0]+x_shift, agent1_pos[1]+y_shift] == agent2_pos:
                possiblemoves.remove(this_move)

        this_agent1_move = ''
      Each Frame:
        current_agent1_keyresp = resp_agent1.getKeys(clear=True)
        if current_agent1_keyresp:
             if resp_agent1.keys in possiblemoves:
                if resp_agent1.keys == 'h':
                    this_agent1_move = 'left'
                    agent1_pos = [agent1_pos[0]-.15, agent1_pos[1]]
                    agent1.image = agent1_imgs['left']

                    # store timing:
                    agent1_move_onset_time = globalClock.getTime() - trigger_time
                    thisExp.addData('agent1_move_onset', agent1_move_onset_time)

                    agent1_move_since_round_start = globalClock.getTime() - round_start_time
                    thisExp.addData('agent1_move_onset_from_round_start', agent1_move_since_round_start)

                    win.flip()
                elif resp_agent1.keys == 'k':
                    this_agent1_move = 'right'
                    agent1_pos = [agent1_pos[0]+.15, agent1_pos[1]]
                    agent1.image = agent1_imgs['right']

                    # store timing:
                    agent1_move_onset_time = globalClock.getTime() - trigger_time
                    thisExp.addData('agent1_move_onset', agent1_move_onset_time)

                    agent1_move_since_round_start = globalClock.getTime() - round_start_time
                    thisExp.addData('agent1_move_onset_from_round_start', agent1_move_since_round_start)

                    win.flip()
                elif resp_agent1.keys == 'u':
                    this_agent1_move = 'up'
                    agent1_pos = [agent1_pos[0], agent1_pos[1]+.15]
                    agent1.image = agent1_imgs['up']

                    # store timing:
                    agent1_move_onset_time = globalClock.getTime() - trigger_time
                    thisExp.addData('agent1_move_onset', agent1_move_onset_time)

                    agent1_move_since_round_start = globalClock.getTime() - round_start_time
                    thisExp.addData('agent1_move_onset_from_round_start', agent1_move_since_round_start)

                    win.flip()
                elif resp_agent1.keys == 'n':
                    this_agent1_move = 'down'
                    agent1_pos = [agent1_pos[0], agent1_pos[1]-.15]
                    agent1.image = agent1_imgs['down']

                    # store timing:
                    agent1_move_onset_time = globalClock.getTime() - trigger_time
                    thisExp.addData('agent1_move_onset', agent1_move_onset_time)

                    agent1_move_since_round_start = globalClock.getTime() - round_start_time
                    thisExp.addData('agent1_move_onset_from_round_start', agent1_move_since_round_start)

                    win.flip()
                else:
                    this_agent1_move = 'null'
                    agent1.image = agent1_imgs['down']

                    # store timing:
                    agent1_move_onset_time = globalClock.getTime() - trigger_time
                    thisExp.addData('agent1_move_onset', agent1_move_onset_time)

                    agent1_move_since_round_start = globalClock.getTime() - round_start_time
                    thisExp.addData('agent1_move_onset_from_round_start', agent1_move_since_round_start)

                    win.flip()

                agent1.setPos(agent1_pos, log=True)
                agent1_indicator_text.setPos(agent1_pos, log=True)

                if agent1_pos[0] > .3:
                    egg_right.setAutoDraw(False)
                if agent1_pos[0] < -.3:
                    egg_left.setAutoDraw(False)
                win.flip()
                continueRoutine = False
      End Routine:
        #print('agent1', out_x, out_y, possiblemoves, resp_agent1.keys, agent1_pos)

        if this_agent1_move in ['up','down','left','right']:
            thisExp.addData(f'agent1_action', this_agent1_move)
        else:
            thisExp.addData(f'agent1_action', 'null')

        core.wait(agent1_jitter)
        agent1.image = agent1_imgs['down']
        win.flip()

        agent1_indicator_text.color = "black"
  Routine start_round
    CodeComponent reposition
      Code Type = Auto->JS
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      Begin Routine:
        # check who goes first
        if firstplayer == 'player1':
            player1_turn = 1
            player2_turn = 0
            PLAYER_START_TEXT = '\nPLAYER 1 GOES FIRST'
            PLAYER_START_IMG = agent1_imgs['down']
        elif firstplayer == 'player2':
            player1_turn = 0
            player2_turn = 1
            PLAYER_START_TEXT = '\nPLAYER 2 GOES FIRST'
            PLAYER_START_IMG = agent2_imgs['down']
      End Routine:
        agent1_pos = [agent1_startx, agent1_starty]
        agent2_pos = [agent2_startx, agent2_starty]
        chick1_pos = [chick_startx, chick_starty]
        #random_side = np.random.permutation([-.3, .3])
        #chick1_pos = [0., np.random.choice([-.3,-.15,0,.15,.3])]
        ##agent2_pos = [random_side[1], np.random.choice([-.3,-.15,.15,.3])]
        #if easy_defect == 'player1':
        #    p_sides = np.random.permutation([-1,1])
        #    agent1_pos = [random_side[0], p_sides[0]*.15]
        #    agent2_pos = [random_side[1], p_sides[1]*.3]
        #    # make it easier for p1 to get egg,
        #    # place opposite side of chicken, closer to egg
        ##    if chick1_pos[1] != 0:
        ##        agent1_pos = [random_side[0], np.sign(chick1_pos[1])*-1*.15]
        ##        agent2_pos = [random_side[1], np.sign(chick1_pos[1])*.3]
        ##    else:
        ##        p_sides = np.random.permutation([-1,1])
        ##        agent1_pos = [random_side[0], p_sides[0]*.15]
        ##        agent2_pos = [random_side[1], p_sides[1]*.3]
        #
        #elif easy_defect == 'player2':
        #    p_sides = np.random.permutation([-1,1])
        #    agent1_pos = [random_side[0], p_sides[0]*.3]
        #    agent2_pos = [random_side[1], p_sides[1]*.15]
        #    # make it easier for p2 to get egg,
        #    # place opposite side of chicken, closer to egg
        ##    if chick1_pos[1] != 0:
        ##        agent2_pos = [random_side[1], np.sign(chick1_pos[1])*-1*.15]
        ##        agent1_pos = [random_side[0], np.sign(chick1_pos[1])*.3]
        ##    else:
        ##        p_sides = np.random.permutation([-1,1])
        ##        agent2_pos = [random_side[0], p_sides[1]*.15]
        ##        agent1_pos = [random_side[1], p_sides[0]*.3]
        #
        #elif easy_defect == 'both':
        #    # make it harder for both to get egg,
        #    # place opposite side of chicken, closer to egg
        #    p_sides = np.random.permutation([-1,1])
        #    agent2_pos = [random_side[0], p_sides[1]*.15]
        #    agent1_pos = [random_side[1], p_sides[0]*.15]
        #
        #elif easy_defect == 'none':
        #    # make it harder for both to get egg,
        #    # place same side of chicken, further to egg
        #    p_sides = np.random.permutation([-1,1])
        #    agent2_pos = [random_side[0], p_sides[1]*.3]
        #    agent1_pos = [random_side[1], p_sides[0]*.3]

        agent1.setPos(agent1_pos, log=True)
        #agent1_indicator_text.setPos(agent1_pos, log=True)
        startx1, starty1, startposmoves1 = convert_coords(agent1_pos[0], agent1_pos[1])
        thisExp.addData('agent1_coordstartx', startx1)
        thisExp.addData('agent1_coordstarty', starty1)

        agent2.setPos(agent2_pos, log=True)
        #agent2_indicator_text.setPos(agent2_pos, log=True)
        startx2, starty2, startposmoves2 = convert_coords(agent2_pos[0], agent2_pos[1])
        thisExp.addData('agent2_coordstartx', startx2)
        thisExp.addData('agent2_coordstarty', starty2)

        chick1.setPos(chick1_pos, log=True)
        startx0, starty0, startposmoves0 = convert_coords(chick1_pos[0], chick1_pos[1])
        thisExp.addData('chick1_coordstartx', startx0)
        thisExp.addData('chick1_coordstarty', starty0)

        if nchicks >= 2:
            chick2_pos = [-.15, np.random.choice([-.3,0,.3])]
            chick2.setPos(chick2_pos, log=True)

        if nchicks >= 3:
            chick3_pos = [.15, np.random.choice([-.3,0,.3])]
            chick3.setPos(chick3_pos, log=True)

        TrialCount = 0
        TurnBonus25 = 175
        endLoop = 0
    CodeComponent draw_trial_txt
      Code Type = Auto->JS
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      Begin Routine:
        # store timing:
        start_round_time = globalClock.getTime() - trigger_time
        thisExp.addData('round_start_onset', start_round_time)
      End Routine:
        trial_text = visual.TextStim(win=win, name='trial_text',
            text='',
            font='Open Sans',
            pos=(.55, .35), height=0.04, wrapWidth=None, ori=0.0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-1.0);
    CodeComponent player_indicators
      Code Type = Auto->JS
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      Begin Experiment:
        agent1_indicator_text = visual.TextStim(win=win,
            name='agent1_indicator_text',
            text='\n\n\n\n\n\n\nPLAYER 1',
            font='Open Sans',
            pos=[0,0],
            height=0.0145, wrapWidth=None, ori=0.0,
            color='black', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-20.0);
        agent2_indicator_text = visual.TextStim(win=win,
            name='agent2_indicator_text',
            text='\n\n\n\n\n\n\nPLAYER 2',
            font='Open Sans',
            pos=[0,0],
            height=0.0145, wrapWidth=None, ori=0.0,
            color='black', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-20.0);
        agent1_indicator_text.bold = True
        agent2_indicator_text.bold = True

        agent1_indicator_text.setAutoDraw(False)
        agent2_indicator_text.setAutoDraw(False)
      End Routine:
        agent1_indicator_text.setPos(agent1_pos)
        agent1_indicator_text.setAutoDraw(True)
        agent2_indicator_text.setPos(agent2_pos)
        agent2_indicator_text.setAutoDraw(True)
    TextComponent start_round_txt
      letterHeight = 0.05
      pos = (0, .15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $PLAYER_START_TEXT
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    CodeComponent set_avatars
      Code Type = Auto->JS
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      End Routine:
        GridWorldComponents = [diode_square_white, b_0_2, b_0_1, b_3_0, b_2_2, b_1_2, b_2_1, b_2_neg1, b_2_neg2, b_2_0, b_1_neg2, b_1_0, b_0_0, b_neg1_0, b_neg1_2, b_neg1_neg2, b_neg2_0, b_neg2_1, b_neg2_neg1, b_neg2_neg2, b_neg2_2, b_neg3_0, b_0_neg1, b_0_neg2, egg_left, egg_right]

        for thisComponent in GridWorldComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(True)

        AgentsComponents = [agent1, agent2, chick1]
        if nchicks >= 2:
            AgentsComponents += [chick2]

        if nchicks >= 3:
            AgentsComponents += [chick3]

        for thisComponent in AgentsComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(True)
    PolygonComponent diode_square_round_start
      anchor = bottom-center
      fillColor = black
      pos = (-1,-1)
      shape = rectangle
      size = (.45,.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      units = norm
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    ImageComponent start_round_player_display
      image [set every repeat] = $PLAYER_START_IMG
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent round_start_trigger
      Code Type = Auto->JS
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      End Routine:
        round_start_time = globalClock.getTime()
        thisExp.addData('round_start_onset', round_start_time)
  Routine start_exp
    CodeComponent draw_world
      Code Type = Auto->JS
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      Begin Experiment:
        # --- Initialize components for "GridWorld" ---
        b_0_2 = visual.Rect(
            win=win, name='b_0_2',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(0, .3), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_0_1 = visual.Rect(
            win=win, name='b_0_1',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(0, .15), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_3_0 = visual.Rect(
            win=win, name='b_3_0',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(.45, 0), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_2_2 = visual.Rect(
            win=win, name='b_2_2',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(.3, .3), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_1_2 = visual.Rect(
            win=win, name='b_1_2',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(.15, .3), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_2_1 = visual.Rect(
            win=win, name='b_2_1',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(.3, .15), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_2_neg1 = visual.Rect(
            win=win, name='b_2_neg1',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(.3, -.15), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_2_neg2 = visual.Rect(
            win=win, name='b_2_neg2',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(.3, -.3), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_2_0 = visual.Rect(
            win=win, name='b_2_0',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(.3, 0), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_1_neg2 = visual.Rect(
            win=win, name='b_1_neg2',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(.15, -.3), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_1_0 = visual.Rect(
            win=win, name='b_1_0',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(.15, 0), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_0_0 = visual.Rect(
            win=win, name='b_0_0',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(0, 0), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_neg1_0 = visual.Rect(
            win=win, name='b_neg1_0',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(-.15, 0), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_neg1_2 = visual.Rect(
            win=win, name='b_neg1_2',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(-.15, .3), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_neg1_neg2 = visual.Rect(
            win=win, name='b_neg1_neg2',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(-.15, -.3), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_neg2_0 = visual.Rect(
            win=win, name='b_neg2_0',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(-.3, 0), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_neg2_1 = visual.Rect(
            win=win, name='b_neg2_1',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(-.3, .15), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_neg2_neg1 = visual.Rect(
            win=win, name='b_neg2_neg1',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(-.3, -.15), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_neg2_neg2 = visual.Rect(
            win=win, name='b_neg2_neg2',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(-.3, -.3), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_neg2_2 = visual.Rect(
            win=win, name='b_neg2_2',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(-.3, .3), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_neg3_0 = visual.Rect(
            win=win, name='b_neg3_0',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(-.45, 0), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_0_neg1 = visual.Rect(
            win=win, name='b_0_neg1',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(0, -.15), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_0_neg2 = visual.Rect(
            win=win, name='b_0_neg2',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(0, -.3), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)

        egg_left = visual.ImageStim(
            win=win,
            name='egg_left',
            image='stimuli/egg.png', mask=None, anchor='center',
            ori=0.0, pos=(-.45, 0), size=(0.06, 0.06), #autoDraw=True,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-3.0)
        egg_left.setAutoDraw(True)

        egg_right = visual.ImageStim(
            win=win,
            name='egg_right',
            image='stimuli/egg.png', mask=None, anchor='center',
            ori=0.0, pos=(.45, 0), size=(0.06, 0.06), #autoDraw=True,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-3.0)
        egg_right.setAutoDraw(True)

        #rabbit_left = visual.Rect(
        #    win=win, name='rabbit_left',
        #    width=(0.05, 0.05)[0], height=(0.05, 0.05)[1],
        #    ori=0.0, pos=(-.45, 0), anchor='center', autoDraw=True,
        #    lineWidth=1.0,     colorSpace='rgb',  lineColor='blue', fillColor='yellow',
        #    opacity=None, depth=-3.0, interpolate=True)
        #rabbit_right = visual.Rect(
        #    win=win, name='rabbit_right',
        #    width=(0.05, 0.05)[0], height=(0.05, 0.05)[1],
        #    ori=0.0, pos=(.45, 0), anchor='center', autoDraw=True,
        #    lineWidth=1.0,     colorSpace='rgb',  lineColor='blue', fillColor='yellow',
        #    opacity=None, depth=-3.0, interpolate=True)
      End Experiment:
        # --- Ending "GridWorld" ---
        GridWorldComponents = [diode_square_white, egg_left, egg_right, b_0_2, b_0_1, b_3_0, b_2_2, b_1_2, b_2_1, b_2_neg1, b_2_neg2, b_2_0, b_1_neg2, b_1_0, b_0_0, b_neg1_0, b_neg1_2, b_neg1_neg2, b_neg2_0, b_neg2_1, b_neg2_neg1, b_neg2_neg2, b_neg2_2, b_neg3_0, b_0_neg1, b_0_neg2]

        for thisComponent in GridWorldComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(False)
    CodeComponent draw_agents
      Code Type = Auto->JS
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      Before Experiment:
        agent1_score = 0
        agent2_score = 0
      Begin Experiment:
        avatar1_no = expInfo['player1av']
        agent1_imgs = {'stay':f'stimuli/avatars/avatar-{avatar1_no}_down.png',
                       'up':f'stimuli/avatars/avatar-{avatar1_no}_up.png',
                       'down':f'stimuli/avatars/avatar-{avatar1_no}_down.png',
                       'left':f'stimuli/avatars/avatar-{avatar1_no}_left.png',
                       'right':f'stimuli/avatars/avatar-{avatar1_no}_right.png'}
        avatar2_no = expInfo['player2av']
        agent2_imgs = {'stay':f'stimuli/avatars/avatar-{avatar2_no}_down.png',
                       'up':f'stimuli/avatars/avatar-{avatar2_no}_up.png',
                       'down':f'stimuli/avatars/avatar-{avatar2_no}_down.png',
                       'left':f'stimuli/avatars/avatar-{avatar2_no}_left.png',
                       'right':f'stimuli/avatars/avatar-{avatar2_no}_right.png'}

        agent1 = visual.ImageStim(
            win=win,
            name='agent1',
            image=agent1_imgs['down'], mask=None, anchor='center',
            ori=0.0, pos=[-.3,-.3], size=(0.1, 0.1), #autoDraw=True,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-10.0)

        agent2 = visual.ImageStim(
            win=win,
            name='agent2',
            image=agent2_imgs['down'], mask=None, anchor='center',
            ori=0.0, pos=[.3,.3], size=(0.1, 0.1), #autoDraw=True,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-10.0)


        #agent_stims = ['stimuli/player-pink.png', 'stimuli/player-yellow.png','stimuli/player-pink.png', 'stimuli/player-yellow.png']
        #agents_imgs = list(np.random.permutation(agent_stim))

        #agent1 = visual.ShapeStim(
        #    win=win, name='agent1',
        #    size=(0.1, 0.1), vertices='circle',
        #    ori=0.0, pos=agent1_pos, anchor='center', autoDraw=True,
        #    lineWidth=1.0,     colorSpace='rgb',  lineColor='black', fillColor='red',
        #    opacity=None, depth=-5.0, interpolate=True)
        #agent2 = visual.ShapeStim(
        #    win=win, name='agent2',
        #    size=(0.1, 0.1), vertices='circle',
        #    ori=0.0, pos=agent2_pos, anchor='center', autoDraw=True,
        #    lineWidth=1.0,     colorSpace='rgb',  lineColor='black', fillColor='blue',
        #    opacity=None, depth=-5.0, interpolate=True)

        #
      End Experiment:
        # --- Ending "Agents" ---
        AgentsComponents = [agent1, agent2, chick1]
        if nchicks >= 2:
            AgentsComponents += [chick2]

        if nchicks >= 3:
            AgentsComponents += [chick3]

        for thisComponent in AgentsComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(False)
    CodeComponent draw_chick
      Code Type = Auto->JS
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      Begin Experiment:
        nchicks = 1 #int(expInfo['nchicks'])

        chick1_pos = [0., 0.]
        chick2_pos = [0., 0.]
        chick3_pos = [0., 0.]

        #chick_stim = ['stimuli/chick-green.png', 'stimuli/chick-blue.png', 'stimuli/chick-red.png']
        #chick1_img, chick2_img, chick3_img = np.random.permutation(chick_stim)
        chick1_imgs = {'stay':f'stimuli/chicken_down.png',
                       'up':f'stimuli/chicken_up.png',
                       'down':f'stimuli/chicken_down.png',
                       'left':f'stimuli/chicken_left.png',
                       'right':f'stimuli/chicken_right.png'}

        chick1 = visual.ImageStim(
            win=win,
            name='chick1',
            image=chick1_imgs['down'], mask=None, anchor='center',
            ori=0.0, pos=chick1_pos, size=(0.09, 0.09), #autoDraw=True,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-2.0)
        chick1.setAutoDraw(True)

        #if nchicks >= 2:
        #    chick2 = visual.ImageStim(
        #    win=win,
        #    name='chick2',
        #    image=chick2_img, mask=None, anchor='center',
        #    ori=0.0, pos=chick2_pos, size=(0.1, 0.1), #autoDraw=True,
        #    color=[1,1,1], colorSpace='rgb', opacity=None,
        #    flipHoriz=False, flipVert=False,
        #    texRes=128.0, interpolate=False, depth=-2.0)
        #    chick2.setAutoDraw(True)
        #
        #if nchicks >= 3:
        #    chick3 = visual.ImageStim(
        #    win=win,
        #    name='chick3',
        #    image=chick3_img, mask=None, anchor='center',
        #    ori=0.0, pos=chick3_pos, size=(0.1, 0.1), #autoDraw=True,
        #    color=[1,1,1], colorSpace='rgb', opacity=None,
        #    flipHoriz=False, flipVert=False,
        #    texRes=128.0, interpolate=False, depth=-2.0)
        #    chick3.setAutoDraw(True)
        #
        #stag = visual.Rect(
        #    win=win, name='stag',
        #    width=(0.1, 0.1)[0], height=(0.1, 0.1)[1],
        #    ori=0.0, pos=stag1_pos, anchor='center', autoDraw=True,
        #    lineWidth=1.0,     colorSpace='rgb',  lineColor='black', fillColor='yellow',
        #    opacity=None, depth=-2.0, interpolate=True)
    CodeComponent get_coords
      Code Type = Auto->JS
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      Before Experiment:
        import pandas as pd, numpy as np

        try:
            coord_df = pd.read_csv('C:\\Users\\Kevin\\Desktop\\EGGHUNT\\egghunttask\\coord_key.csv')
        except:
            coord_df = pd.read_csv('coord_key.csv')

        def convert_coords(in_x, in_y, revert=False, agent='computer'):
            # input true coords (e.g., [.15, 0])
            # output possible moves and grid coords
            if agent == 'computer':

                if revert:
                    out_x = coord_df[coord_df['x']==in_x][coord_df['y']==in_y]['true_x'].iloc[0]
                    out_y = coord_df[coord_df['y']==in_y][coord_df['x']==in_x]['true_y'].iloc[0]
                    possiblemoves = list(coord_df[coord_df['y']==in_y][coord_df['x']==in_x]['possiblemovescomp'].iloc[0].split(";"))
                else:
                    out_x = coord_df[coord_df['true_x']==in_x][coord_df['true_y']==in_y]['x'].iloc[0]
                    out_y = coord_df[coord_df['true_y']==in_y][coord_df['true_x']==in_x]['y'].iloc[0]
                    possiblemoves = list(coord_df[coord_df['true_y']==in_y][coord_df['true_x']==in_x]['possiblemovescomp'].iloc[0].split(";"))

            elif agent == 'player1':
                if revert:
                    out_x = coord_df[coord_df['x']==in_x][coord_df['y']==in_y]['true_x'].iloc[0]
                    out_y = coord_df[coord_df['y']==in_y][coord_df['x']==in_x]['true_y'].iloc[0]
                    possiblemoves = list(coord_df[coord_df['y']==in_y][coord_df['x']==in_x]['possiblemoves1'].iloc[0].split(";"))
                else:
                    out_x = coord_df[coord_df['true_x']==in_x][coord_df['true_y']==in_y]['x'].iloc[0]
                    out_y = coord_df[coord_df['true_y']==in_y][coord_df['true_x']==in_x]['y'].iloc[0]
                    possiblemoves = list(coord_df[coord_df['true_y']==in_y][coord_df['true_x']==in_x]['possiblemoves1'].iloc[0].split(";"))

            elif agent == 'player2':
                if revert:
                    out_x = coord_df[coord_df['x']==in_x][coord_df['y']==in_y]['true_x'].iloc[0]
                    out_y = coord_df[coord_df['y']==in_y][coord_df['x']==in_x]['true_y'].iloc[0]
                    possiblemoves = list(coord_df[coord_df['y']==in_y][coord_df['x']==in_x]['possiblemoves2'].iloc[0].split(";"))
                else:
                    out_x = coord_df[coord_df['true_x']==in_x][coord_df['true_y']==in_y]['x'].iloc[0]
                    out_y = coord_df[coord_df['true_y']==in_y][coord_df['true_x']==in_x]['y'].iloc[0]
                    possiblemoves = list(coord_df[coord_df['true_y']==in_y][coord_df['true_x']==in_x]['possiblemoves2'].iloc[0].split(";"))

            return out_x, out_y, possiblemoves

        def convert_moves(next_move, revert=False):
            # converts string (e.g., 'left') to position (e.g., -.15)
            if revert:
                if next_move == 'left' or next_move == 'num_4' or next_move == 'h':
                    x_shift = -1
                    y_shift = 0
                elif next_move == 'right' or next_move == 'num_6' or next_move == 'k':
                    x_shift = 1
                    y_shift = 0
                elif next_move == 'up' or next_move == 'num_8' or next_move == 'u':
                    y_shift = 1
                    x_shift = 0
                elif next_move == 'down' or next_move == 'num_2' or next_move == 'n':
                    y_shift = -1
                    x_shift = 0
                elif next_move == 'space' or next_move == 'num_5' or next_move == 'j':
                    y_shift = 0
                    x_shift = 0

            else:
                if next_move == 'left' or next_move == 'num_4' or next_move == 'h':
                    x_shift = -.15
                    y_shift = 0
                elif next_move == 'right' or next_move == 'num_6' or next_move == 'k':
                    x_shift = .15
                    y_shift = 0
                elif next_move == 'up' or next_move == 'num_8' or next_move == 'u':
                    y_shift = .15
                    x_shift = 0
                elif next_move == 'down' or next_move == 'num_2' or next_move == 'n':
                    y_shift = -.15
                    x_shift = 0
                elif next_move == 'space' or next_move == 'num_5' or next_move == 'j':
                    y_shift = 0
                    x_shift = 0

            return x_shift, y_shift

        def get_adjacent_tiles(stag_x, stag_y):
            # input stag coords, output list of adjacent coords
            grid_x, grid_y, possiblemoves = convert_coords(stag_x, stag_y)

            adjacent_spaces = []
            for move in possiblemoves:
                x_shift, y_shift = convert_moves(move)
                adjacent_spaces += [[stag_x+x_shift, stag_y+y_shift]]

            return adjacent_spaces
    CodeComponent def_interaction
      Code Type = Auto->JS
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      Begin Experiment:
        #if (expInfo['interact'] == 'y') or (expInfo['interact'] == 'yes') or (expInfo['interact'] == '1'):
        #    interaction_bool = 1
        #    nointeraction_bool = 0
        #    print('interacting...')

        interaction_bool = 1
        nointeraction_bool = 0
        print('interacting...')
        #if int(expInfo['player2']) == 3987:
        #    interaction_bool = 0
        #    nointeraction_bool = 1
        #    print('NOT interacting...')
        #else:
        #    interaction_bool = 1
        #    nointeraction_bool = 0
        #    print('interacting...')
    CodeComponent hide_mouse_cursor
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False
      End Experiment:
        win.mouseVisible = True
    CodeComponent diode_white
      Code Type = Auto->JS
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      Begin Experiment:
        diode_square_white = visual.Rect(
            win=win, name='diode_square_white',units='norm',
            width=(.45,.45)[0], height=(.45,.45)[1],
            ori=0.0, pos=(-1,-1), anchor='bottom-center',
            lineWidth=1.0,     colorSpace='rgb',  lineColor=None, fillColor='white',
            opacity=None, depth=-5.0, interpolate=True)
  Routine end_round
    CodeComponent store_trial_count
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('total_trials', TrialCount)
        agent1_score += agent1_pts
        agent2_score += agent2_pts

        thisExp.addData('agent1_score', agent1_score)
        thisExp.addData('agent2_score', agent2_score)
    CodeComponent compute_score
      Code Type = Auto->JS
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      Begin Routine:
        # store timing:
        end_round_time = globalClock.getTime() - trigger_time
        thisExp.addData('round_end_onset', end_round_time)

        ITI_dur = np.random.uniform(2,3)
        thisExp.addData('ITI', ITI_dur)

        trial_text.setAutoDraw(False)
        GridWorldComponents = [diode_square_white, b_0_2, b_0_1, b_3_0, b_2_2, b_1_2, b_2_1, b_2_neg1, b_2_neg2, b_2_0, b_1_neg2, b_1_0, b_0_0, b_neg1_0, b_neg1_2, b_neg1_neg2, b_neg2_0, b_neg2_1, b_neg2_neg1, b_neg2_neg2, b_neg2_2, b_neg3_0, b_0_neg1, b_0_neg2, egg_left, egg_right]

        for thisComponent in GridWorldComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(False)


        AgentsComponents = [agent1, agent2, agent1_indicator_text, agent2_indicator_text, chick1]
        if nchicks >= 2:
            AgentsComponents += [chick2]

        if nchicks >= 3:
            AgentsComponents += [chick3]

        for thisComponent in AgentsComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(False)

        if agent1_pts > 0:
            agent1_complete_text = f'PLAYER 1:\n+{agent1_pts} points\n\n'
        elif agent1_pts <= 0:
            agent1_complete_text = f'PLAYER 1:\n{agent1_pts} points\n\n'

        if agent2_pts > 0 :
            agent2_complete_text = f'PLAYER 2:\n+{agent2_pts} points'
        elif agent1_pts <= 0:
            agent2_complete_text = f'PLAYER 2:\n{agent2_pts} points'

        round_complete_text = f'ROUND COMPLETED\n\n' + agent1_complete_text + agent2_complete_text
    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_dur
      text [set every repeat] = $round_complete_text
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    KeyboardComponent key_resp
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent diode_square
      anchor = bottom-center
      fillColor = black
      pos = (-1,-1)
      shape = rectangle
      size = (.45,.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_dur
      units = norm
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  Routine end_turns
    CodeComponent check_end
      Code Type = Auto->JS
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      End Routine:
        agent1_pts = 0 + current_time_bonus
        agent2_pts = 0 + current_time_bonus

        if (abs(agent2_pos[0]) > .35) and (abs(agent1_pos[0]) > .35):
            agent1_pts = 100 + current_time_bonus
            agent2_pts = 100 + current_time_bonus
            trials.nReps = 0
            trials.Finished = True
            endLoop = 1
            thisExp.addData('outcome', 'both defect')
            print('ending agent 1+2')
        elif (abs(agent1_pos[0]) > .35):
            agent1_pts = 100 + current_time_bonus
            agent2_pts = 0 + current_time_bonus
            trials.nReps = 0
            trials.Finished = True
            endLoop = 1
            thisExp.addData('outcome', 'agent1 defect')
            print('ending agent 1')
        elif (abs(agent2_pos[0]) > .35):
            agent1_pts = 0 + current_time_bonus
            agent2_pts = 100 + current_time_bonus
            trials.nReps = 0
            trials.Finished = True
            endLoop = 1
            thisExp.addData('outcome', 'agent2 defect')
            print('ending agent 2')
        else:
            thisExp.addData('outcome', 'none')

        if endLoop != 1:
            # compute chick 1 coords
            adjacent_spaces1 = get_adjacent_tiles(chick1_pos[0], chick1_pos[1])
            print(adjacent_spaces1)

            agent1_hunt1 = False
            if agent1_pos in adjacent_spaces1:
                agent1_hunt1 = True
                thisExp.addData('agent1_nexttochick', 1)
                print('agent 1 hunt 1')
            else:
                thisExp.addData('agent1_nexttochick', 0)

            agent2_hunt1 = False
            if agent2_pos in adjacent_spaces1:
                agent2_hunt1 = True
                thisExp.addData('agent2_nexttochick', 1)
                print('agent 2 hunt 2')
            else:
                thisExp.addData('agent2_nexttochick', 0)

            if nchicks == 1:
                if agent1_hunt1 and agent2_hunt1:
                    agent1_pts = 200 + current_time_bonus
                    agent2_pts = 200 + current_time_bonus
                    trials.nReps = 0
                    trials.Finished = True
                    endLoop = 1
                    thisExp.addData('outcome', 'cooperate')
                    print('ending agent 1+2')

            if nchicks >= 2:
                adjacent_spaces2 = get_adjacent_tiles(chick2_pos[0], chick2_pos[1])
                print(adjacent_spaces2)

                agent1_hunt2 = False
                if agent1_pos in adjacent_spaces2:
                    agent1_hunt2 = True
                    print('agent 1 hunt 2')

                agent2_hunt2 = False
                if agent2_pos in adjacent_spaces2:
                    agent2_hunt2 = True
                    print('agent 2 hunt 2')

                if agent1_hunt1 and agent2_hunt1:
                    agent1_pts = 500 + current_time_bonus
                    agent2_pts = 200 + current_time_bonus
                    trials.nReps = 0
                    trials.Finished = True
                    endLoop = 1
                    print('ending agent 1+2')

                if agent1_hunt2 and agent2_hunt2:
                    agent1_pts = 200 + current_time_bonus
                    agent2_pts = 500 + current_time_bonus
                    trials.nReps = 0
                    trials.Finished = True
                    endLoop = 1
                    print('ending agent 1+2')

        thisExp.addData('agent1_pts', agent1_pts)
        thisExp.addData('agent2_pts', agent2_pts)
    CodeComponent append_position
      Code Type = Auto->JS
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      Begin Routine:
        cur_agents = [agent1, agent2, chick1]

        for this_agent in cur_agents:
            this_x, this_y, this_moves = convert_coords(round(this_agent.pos[0],2), round(this_agent.pos[1],2))
            thisExp.addData(f'{this_agent.name}_x', this_x)
            thisExp.addData(f'{this_agent.name}_y', this_y)
  Routine move_agent2_computer
    CodeComponent change_stag_2
      Code Type = Auto->JS
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      Begin Routine:
        trial_num_text = f'{TrialCount} out of {trials.nReps} trials'

        # get grid coords and moves
        out_x, out_y, possiblemoves = convert_coords(agent2_pos[0], agent2_pos[1])

        flag = True
        while flag:
            this_agent2_move = np.random.choice(possiblemoves)
            x_shift, y_shift = convert_moves(this_agent2_move)

            if ([agent2_pos[0]+x_shift, agent2_pos[1]+y_shift] == stag_pos):
                flag = True
                possiblemoves.remove(this_agent2_move)
            elif ([agent2_pos[0]+x_shift, agent2_pos[1]+y_shift] == agent1_pos):
                flag = True
                possiblemoves.remove(this_agent2_move)
            else:
                flag = False
      End Routine:
        agent2_pos = [agent2_pos[0]+x_shift, agent2_pos[1]+y_shift]
        agent2.setPos(agent2_pos, log=True)
        win.flip()
        core.wait(1)

        print('agent2', out_x, out_y, possiblemoves, this_agent2_move, agent2_pos)
    TextComponent instr_agent2_computer
      letterHeight = 0.05
      pos = (.55, .45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = player 2 move
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    CodeComponent JScode
      Code Type = JS
      disabled = True
      Before JS Experiment:
        // https://www.psychopy.org/online/shelf.html
        session_number = await psychoJS.shelf.getDictionaryFieldValue({key: ["session_tracker"], fieldName:expInfo['participant'], defaultValue:'no sessions detected'})
        session_number = session_number + 1
        console.log('session_number2', session_number)
        psychoJS.shelf.setDictionaryFieldValue({key: ["session_tracker"], fieldName: expInfo['participant'], fieldValue :session_number})
  Routine move_agent2
    KeyboardComponent resp_agent2
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      store = nothing
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    TextComponent instr_agent2
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text = PLAYER 2 TURN
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    CodeComponent change_agent2
      Code Type = Auto->JS
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      Begin Routine:
        agent2_jitter = np.random.uniform(1,1.5)
        thisExp.addData('agent2_jitter', agent2_jitter)

        instr_agent2.bold = True
        agent2_indicator_text.color = "red"

        # get grid coords and moves
        out_x, out_y, possiblemoves = convert_coords(agent2_pos[0], agent2_pos[1], agent='player2')

        # remove possible move if adjacent to another agent
        for this_move in possiblemoves:
            x_shift, y_shift = convert_moves(this_move)
            if [agent2_pos[0]+x_shift, agent2_pos[1]+y_shift] == chick1_pos:
                possiblemoves.remove(this_move)
            if [agent2_pos[0]+x_shift, agent2_pos[1]+y_shift] == agent1_pos:
                possiblemoves.remove(this_move)

        this_agent2_move = ''
      Each Frame:
        #if resp_agent2.keys:
        current_agent2_keyresp = resp_agent2.getKeys(clear=True)
        if current_agent2_keyresp:
            if resp_agent2.keys in possiblemoves:
                if resp_agent2.keys == 'num_4':
                    this_agent2_move = 'left'
                    agent2_pos = [agent2_pos[0]-.15, agent2_pos[1]]
                    agent2.image = agent2_imgs['left']

                    # store timing:
                    agent2_move_onset_time = globalClock.getTime() - trigger_time
                    thisExp.addData('agent2_move_onset', agent2_move_onset_time)

                    agent2_move_since_round_start = globalClock.getTime() - round_start_time
                    thisExp.addData('agent2_move_onset_from_round_start', agent2_move_since_round_start)

                    win.flip()
                elif resp_agent2.keys == 'num_6':
                    this_agent2_move = 'right'
                    agent2_pos = [agent2_pos[0]+.15, agent2_pos[1]]
                    agent2.image = agent2_imgs['right']

                    # store timing:
                    agent2_move_onset_time = globalClock.getTime() - trigger_time
                    thisExp.addData('agent2_move_onset', agent2_move_onset_time)

                    agent2_move_since_round_start = globalClock.getTime() - round_start_time
                    thisExp.addData('agent2_move_onset_from_round_start', agent2_move_since_round_start)

                    win.flip()
                elif resp_agent2.keys == 'num_8':
                    this_agent2_move = 'up'
                    agent2_pos = [agent2_pos[0], agent2_pos[1]+.15]
                    agent2.image = agent2_imgs['up']

                    # store timing:
                    agent2_move_onset_time = globalClock.getTime() - trigger_time
                    thisExp.addData('agent2_move_onset', agent2_move_onset_time)

                    agent2_move_since_round_start = globalClock.getTime() - round_start_time
                    thisExp.addData('agent2_move_onset_from_round_start', agent2_move_since_round_start)

                    win.flip()
                elif resp_agent2.keys == 'num_2':
                    this_agent2_move = 'down'
                    agent2_pos = [agent2_pos[0], agent2_pos[1]-.15]
                    agent2.image = agent2_imgs['down']

                    # store timing:
                    agent2_move_onset_time = globalClock.getTime() - trigger_time
                    thisExp.addData('agent2_move_onset', agent2_move_onset_time)

                    agent2_move_since_round_start = globalClock.getTime() - round_start_time
                    thisExp.addData('agent2_move_onset_from_round_start', agent2_move_since_round_start)

                    win.flip()
                else:
                    this_agent2_move = 'null'
                    agent2.image = agent2_imgs['down']

                    # store timing:
                    agent2_move_onset_time = globalClock.getTime() - trigger_time
                    thisExp.addData('agent2_move_onset', agent2_move_onset_time)

                    agent2_move_since_round_start = globalClock.getTime() - round_start_time
                    thisExp.addData('agent2_move_onset_from_round_start', agent2_move_since_round_start)

                    win.flip()

                agent2.setPos(agent2_pos, log=True)
                agent2_indicator_text.setPos(agent2_pos, log=True)

                if agent2_pos[0] > .3:
                    egg_right.setAutoDraw(False)
                if agent2_pos[0] < -.3:
                    egg_left.setAutoDraw(False)
                win.flip()
                continueRoutine = False
      End Routine:
        #print('agent2', out_x, out_y, possiblemoves, resp_agent2.keys, agent2_pos)

        if this_agent2_move in ['up','down','left','right']:
            thisExp.addData(f'agent2_action', this_agent2_move)
        else:
            thisExp.addData(f'agent2_action', 'null')

        core.wait(agent2_jitter)
        agent2.image = agent2_imgs['down']
        win.flip()
        agent2_indicator_text.color = "black"
  Routine move_chick2
    CodeComponent change_chick_2
      Code Type = Auto->JS
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      Begin Routine:
        if int(expInfo['nchicks']) >= 2:
            # get grid coords and moves
            out_x, out_y, possiblemoves = convert_coords(chick2_pos[0], chick2_pos[1])

            flag = True
            while flag:
                this_stag_move = np.random.choice(possiblemoves)
                x_shift, y_shift = convert_moves(this_stag_move)

                if ([chick2_pos[0]+x_shift, chick2_pos[1]+y_shift] == agent2_pos) or ([chick2_pos[0]+x_shift, chick2_pos[1]+y_shift] == chick1_pos) or ([chick2_pos[0]+x_shift, chick2_pos[1]+y_shift] == agent1_pos):
                    flag = True
                    possiblemoves.remove(this_stag_move)
                elif (abs(chick2_pos[0]+x_shift) > .35):
                    flag = True
                    possiblemoves.remove(this_stag_move)
                else:
                    flag = False

            if this_stag_move == 'right':
                chick2.flipHoriz = True

            if this_stag_move == 'left':
                chick2.flipHoriz = False
        else:
            print('no chick 2')
            continueRoutine = False
      Each Frame:
        if int(expInfo['nchicks']) == 1:
            continueRoutine = False
      End Routine:
        if int(expInfo['nchicks']) >= 2:
            chick2_pos = [chick2_pos[0]+x_shift, chick2_pos[1]+y_shift]
            chick2.setPos(chick2_pos, log=True)
            print('chick2', out_x, out_y, possiblemoves, this_stag_move)

            win.flip()
            core.wait(1)
        else:
            continueRoutine = False
    TextComponent instr_stag_2
      letterHeight = 0.05
      pos = (.55, .45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = chicken 2 move
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    CodeComponent set_trial_text_2
      Code Type = Auto->JS
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      Begin Routine:
        trial_num_text = f'{TrialCount} out of {trials.nReps} trials'
        trial_text.setText(trial_num_text)
        trial_text.setAutoDraw(True)
  Routine move_chick1
    CodeComponent set_trial_text
      Code Type = Auto->JS
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      Begin Experiment:
        if nchicks > 1:
            chick1_instr_txt = 'CHICKEN 1 TURN'
        else:
            chick1_instr_txt = 'CHICKEN TURN'
      Begin Routine:
        instr_chick.bold = True

        TrialCount += 1
        current_time_bonus = (16 - TrialCount) * 10 # minus 10 pts

        #TurnBonus25 = TurnBonus25 - 25
        #current_time_bonus = TurnBonus25 # minus 25 pts
        #trial_num_text = f'turn bonus:\n{current_time_bonus} points' # out of {trials.nReps} trials'
        trial_num_text = f'' # out of {trials.nReps} trials'

        trial_text.setText(trial_num_text)
        trial_text.setAutoDraw(True)
    CodeComponent change_chick
      Code Type = Auto->JS
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      Before Experiment:
        def maximize_chick_distance(agent0_pos, agent1_pos, agent2_pos, possiblemoves, use_nsteps=True):
            max_distance = 0
            best_move = None

            move_dict = {'left': (-.15, 0),
                         'right': (.15, 0),
                         'up': (0, .15),
                         'down': (0, -.15),
                         'space': (0, 0)}

            new_possible_moves = []
            for move in possiblemoves:
                if use_nsteps: # Manhattan distance to move according to number of steps
                    distance1 = abs(agent0_pos[0] + move_dict[move][0] - agent1_pos[0]) + abs(agent0_pos[1] + move_dict[move][1] - agent1_pos[1])
                    distance2 = abs(agent0_pos[0] + move_dict[move][0] - agent2_pos[0]) + abs(agent0_pos[1] + move_dict[move][1] - agent2_pos[1])
                    distance = np.round(distance1 + distance2, 4)

                else: #Euclidean distance
                    distance1 = ((agent0_pos[0] + move_dict[move][0] - agent1_pos[0]) ** 2 + (agent0_pos[1] + move_dict[move][1] - agent1_pos[1]) ** 2) ** 0.5
                    distance2 = ((agent0_pos[0] + move_dict[move][0] - agent2_pos[0]) ** 2 + (agent0_pos[1] + move_dict[move][1] - agent2_pos[1]) ** 2) ** 0.5
                    distance = np.round(distance1 + distance2, 4)

                print(move, distance1, distance2, distance)

                # if move maximizes distance, then store
                # moves to maximize distance if the move does not place chicken next to agent
                # if multiple moves are equal in distance, then chooses randomly among them

                if max_distance == 0:
                    first_move_in_list, first_dist_in_list = move, distance

                if distance1 > .15 and distance2 > .15:
                    if distance >= max_distance:
                        if distance == max_distance or max_distance == 0:
                            # how to choose if all dists are equal:
                            if move == 'space':
                                if distance1 < .15 or distance2 < .15:
                                    continue
                                else:
                                    new_possible_moves.append(move)

                            else:
                                if max_distance == 0:
                                    max_distance = distance
                                    best_move = move
                                else:
                                    new_possible_moves.append(move)
                        else:
                            max_distance = distance
                            best_move = move

            if first_dist_in_list == max_distance:
                new_possible_moves.append(first_move_in_list)

            if len(new_possible_moves) > 0:
                best_move = np.random.choice(new_possible_moves)

            if best_move is None:
                best_move = 'space'

            print(new_possible_moves)
            print(best_move)

            return best_move
      Begin Routine:
        chick_jitter = np.random.uniform(2,3)
        thisExp.addData('chick_jitter', chick_jitter)
        chick_timer = core.Clock()

        # get grid coords and moves
        out_x, out_y, possiblemoves = convert_coords(chick1_pos[0], chick1_pos[1], agent='computer')

        # NEED TO EDIT THIS
        if (chick1_pos[0]== agent2_pos[0] and chick1_pos[1] == agent2_pos[1]) or (chick1_pos[0]== agent1_pos[0] and chick1_pos[1] == agent1_pos[1]):
            possiblemoves.remove('space')

        flag = True
        while flag:
            #this_chick1_move = np.random.choice(possiblemoves)
            this_chick1_move = maximize_chick_distance(chick1_pos, agent1_pos, agent2_pos, possiblemoves)
            x_shift, y_shift = convert_moves(this_chick1_move)

            if nchicks >= 2:
                if ([chick1_pos[0]+x_shift, chick1_pos[1]+y_shift] == agent2_pos) or ([chick1_pos[0]+x_shift, chick1_pos[1]+y_shift] == chick2_pos) or ([chick1_pos[0]+x_shift, chick1_pos[1]+y_shift] == agent1_pos):
                    flag = True
                    possiblemoves.remove(this_chick1_move)
                elif (abs(chick1_pos[0]+x_shift) > .35):
                    flag = True
                    possiblemoves.remove(this_chick1_move)
                else:
                    flag = False
            elif nchicks == 1:
                if ([chick1_pos[0]+x_shift, chick1_pos[1]+y_shift] == agent2_pos) or ([chick1_pos[0]+x_shift, chick1_pos[1]+y_shift] == agent1_pos):
                    flag = True
                    possiblemoves.remove('space')
                    possiblemoves.remove(this_chick1_move)
                elif (abs(chick1_pos[0]+x_shift) > .35):
                    flag = True
                    possiblemoves.remove(this_chick1_move)
                else:
                    flag = False
      Each Frame:
        if chick_timer.getTime()>chick_jitter:
            if this_chick1_move != 'space':
                chick1.image = chick1_imgs[this_chick1_move]
            else:
                chick1.image = chick1_imgs['stay']

            chick1_pos = [chick1_pos[0]+x_shift, chick1_pos[1]+y_shift]
            chick1.setPos(chick1_pos, log=True)
            thisExp.addData(f'chick1_action', this_chick1_move)

            # store timing:
            chick_move_onset_time = globalClock.getTime() - trigger_time
            thisExp.addData('chick_move_onset', chick_move_onset_time)

            chick_move_since_round_start = globalClock.getTime() - round_start_time
            thisExp.addData('chick_move_onset_from_round_start', chick_move_since_round_start)

            #print('chick1', out_x, out_y, possiblemoves, this_chick1_move)
            win.flip()
            core.wait(1)

            chick1.image = chick1_imgs['down']
            win.flip()
            continueRoutine = False
    TextComponent instr_chick
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0.0
      text = $chick1_instr_txt
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  Routine move_computer
    TextComponent instr_computer
      letterHeight = 0.05
      pos = (.55, .45)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = player 2 move
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    CodeComponent change_computer
      Code Type = Auto->JS
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      Begin Routine:
        instr_computer.bold = True

        #trial_num_text = f'turn bonus:\n{current_time_bonus} points'

        # get grid coords and moves
        out_x, out_y, possiblemoves = convert_coords(agent2_pos[0], agent2_pos[1], agent='computer')

        flag = True
        while flag:
            this_agent2_move = np.random.choice(possiblemoves)
            x_shift, y_shift = convert_moves(this_agent2_move)

            if ([agent2_pos[0]+x_shift, agent2_pos[1]+y_shift] == chick1_pos):
                flag = True
                possiblemoves.remove(this_agent2_move)
            elif ([agent2_pos[0]+x_shift, agent2_pos[1]+y_shift] == agent1_pos):
                flag = True
                possiblemoves.remove(this_agent2_move)
            else:
                flag = False


        if this_agent2_move == 'right':
            agent2.flipHoriz = True

        if this_agent2_move == 'left':
            agent2.flipHoriz = False
      End Routine:
        agent2_pos = [agent2_pos[0]+x_shift, agent2_pos[1]+y_shift]
        agent2.setPos(agent2_pos, log=True)
        agent2_indicator_text.setPos(agent2_pos, log=True)

        thisExp.addData(f'agent2_action', this_agent2_move)

        win.flip()
        core.wait(1)

        print('agent2', out_x, out_y, possiblemoves, this_agent2_move, agent2_pos)
  Routine p1_avatar
    CodeComponent reveal_avatar
      Code Type = Auto->JS
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      Begin Experiment:
        agent1_pos = [-.3, -.3]
        agent2_pos = [.3, .3]

        #agent_stims = ['stimuli/player-pink.png', 'stimuli/player-yellow.png','stimuli/player-blue.png']
        #agents_imgs = list(np.random.permutation(agent_stim))

        random_avatar_pos = list(np.random.permutation([(-.45, 0), (.45, 0), (0, 0)]))
      End Routine:
        #GridWorldComponents = [b_0_2, b_0_1, b_3_0, b_2_2, b_1_2, b_2_1, b_2_neg1, b_2_neg2, b_2_0, b_1_neg2, b_1_0, b_0_0, b_neg1_0, b_neg1_2, b_neg1_neg2, b_neg2_0, b_neg2_1, b_neg2_neg1, b_neg2_neg2, b_neg2_2, b_neg3_0, b_0_neg1, b_0_neg2, rabbit_left, rabbit_right]
        #
        #for thisComponent in GridWorldComponents:
        #    if hasattr(thisComponent, "setAutoDraw"):
        #        thisComponent.setAutoDraw(True)
        #
        #AgentsComponents = [agent2, chick1]
        #if nchicks >= 2:
        #    AgentsComponents += [chick2]
        #
        #if nchicks >= 3:
        #    AgentsComponents += [chick3]
        #
        #for thisComponent in AgentsComponents:
        #    if hasattr(thisComponent, "setAutoDraw"):
        #        thisComponent.setAutoDraw(True)
    PolygonComponent polygon
      disabled = True
      fillColor = white
      shape = rectangle
      size = (0.65, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_reveal
      letterHeight = 0.045
      pos = (0, .25)
      startVal [time (s)] = 0.0
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      text:
        PLAYER 1
        Please use your mouse to choose your avatar.
    KeyboardComponent begin
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 1
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    ImageComponent choose_blue
      image = stimuli/player-blue.png
      pos = $random_avatar_pos[0]
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent choose_pink
      image = stimuli/player-pink.png
      pos = $random_avatar_pos[1]
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent choose_yellow
      image = stimuli/player-yellow.png
      pos = $random_avatar_pos[2]
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent p1_mouse
      clickable = choose_blue, choose_pink, choose_yellow
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
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  Routine p2_avatar
    CodeComponent reveal_avatar_2
      Code Type = Auto->JS
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      Begin Routine:
        #win.mouseVisible = False

        p1_avatar_selection = p1_mouse.clicked_name[0]
        print(p1_avatar_selection)

        text_reveal_2 = visual.TextStim(win=win, name='text_reveal_2',
            text='PLAYER 2\nPlease use your mouse to choose your avatar.',
            font='Open Sans',
            pos=(0, .25), height=0.045, wrapWidth=None, ori=0.0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-1.0);
        text_reveal_2.setAutoDraw(True)

        choose_blue_2 = visual.ImageStim(
            win=win,
            name='choose_blue_2',
            image='stimuli/player-blue.png', mask=None, anchor='center',
            ori=0.0, pos=[random_avatar_pos[0]], size=(0.15, 0.15),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=True, depth=-2.0)
        choose_blue_2.setAutoDraw(True)

        choose_pink_2 = visual.ImageStim(
            win=win,
            name='choose_pink_2',
            image='stimuli/player-pink.png', mask=None, anchor='center',
            ori=0.0, pos=[random_avatar_pos[1]], size=(0.15, 0.15),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=True, depth=-3.0)
        choose_pink_2.setAutoDraw(True)

        choose_yellow_2 = visual.ImageStim(
            win=win,
            name='choose_yellow_2',
            image='stimuli/player-yellow.png', mask=None, anchor='center',
            ori=0.0, pos=[random_avatar_pos[2]], size=(0.15, 0.15),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=True, depth=-4.0)
        choose_yellow_2.setAutoDraw(True)

        if p1_avatar_selection == 'choose_pink':
            choose_pink_2.setOpacity(.5)
            agent1_img = 'stimuli/player-pink.png'
            avail_stim = ['stimuli/player-blue.png','stimuli/player-yellow.png']
            p2_clickable_stimuli = [choose_yellow_2, choose_blue_2]
        elif p1_avatar_selection == 'choose_yellow':
            choose_yellow_2.setOpacity(.5)
            agent1_img = 'stimuli/player-yellow.png'
            avail_stim = ['stimuli/player-blue.png','stimuli/player-pink.png']
            p2_clickable_stimuli = [choose_pink_2, choose_blue_2]
        elif p1_avatar_selection == 'choose_blue':
            choose_blue_2.setOpacity(.5)
            agent1_img = 'stimuli/player-blue.png'
            avail_stim = ['stimuli/player-pink.png','stimuli/player-yellow.png']
            p2_clickable_stimuli = [choose_pink_2, choose_yellow_2]

        win.flip()
      End Routine:
        if p2_mouse.clicked_name[0] == 'choose_pink_2':
            choose_pink_2.setOpacity(.5)
            agent2_img = 'stimuli/player-pink.png'
        elif p2_mouse.clicked_name[0] == 'choose_yellow_2':
            choose_yellow_2.setOpacity(.5)
            agent2_img = 'stimuli/player-yellow.png'
        elif p2_mouse.clicked_name[0] == 'choose_blue_2':
            choose_blue_2.setOpacity(.5)
            agent2_img = 'stimuli/player-blue.png'
        win.flip()
        core.wait(1)

        choose_blue_2.setAutoDraw(False)
        choose_pink_2.setAutoDraw(False)
        choose_yellow_2.setAutoDraw(False)
        text_reveal_2.setAutoDraw(False)

        agent1 = visual.ImageStim(
            win=win,
            name='agent1',
            image=agent1_img, mask=None, anchor='center',
            ori=0.0, pos=agent1_pos, size=(0.1, 0.1), #autoDraw=True,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-10.0)

        agent2 = visual.ImageStim(
            win=win,
            name='agent2',
            image=agent2_img, mask=None, anchor='center',
            ori=0.0, pos=agent2_pos, size=(0.1, 0.1), #autoDraw=True,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-10.0)

        GridWorldComponents = [b_0_2, b_0_1, b_3_0, b_2_2, b_1_2, b_2_1, b_2_neg1, b_2_neg2, b_2_0, b_1_neg2, b_1_0, b_0_0, b_neg1_0, b_neg1_2, b_neg1_neg2, b_neg2_0, b_neg2_1, b_neg2_neg1, b_neg2_neg2, b_neg2_2, b_neg3_0, b_0_neg1, b_0_neg2, rabbit_left, rabbit_right]

        for thisComponent in GridWorldComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(True)

        AgentsComponents = [agent1, agent2, chick1]
        if nchicks >= 2:
            AgentsComponents += [chick2]

        if nchicks >= 3:
            AgentsComponents += [chick3]

        for thisComponent in AgentsComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(True)
    MouseComponent p2_mouse
      clickable = p2_clickable_stimuli
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
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  Routine start_2
    TextComponent start_instr_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        EGG HUNT

        You and another player can move around to collect one of two eggs alone (worth 100 points) or cooperate to catch a chicken that can lay four eggs that you will split (worth 400 points total, or 200 points to each player)

        (Press any key to continue)
    KeyboardComponent instr_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image1
      image = stimuli/egg.png
      pos = (-.3, -.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image2
      image = stimuli/chick-red.png
      pos = (.3, -.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine start_1
    TextComponent start_instr_1
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        ~EGG HUNT~

        In this game, you and another player will aim to collect as many eggs as you can to earn points!

        On each round, both of you will start with 150 points. 10 points will be subtracted for every turn taken. For example, 50 points will be subtracted from your score if you take 5 turns to end the round. The round will end once you or the other player collects an egg (worth 100 points each) or both of you cooperate to catch the chicken (worth 400 points total, or 200 points to each player). Keep in mind that rounds can end if players take too long to collect eggs or catch the chicken. You can collect an egg by moving to a space with an egg. You can catch the chicken if you and the other player move to spaces that are next to the chicken. On your turn, you will stay in the same position if you press the corresponding key or if you do not select a move in 6 seconds.

        These points will be tallied at the end of the study and converted to real money for each of the players. Have fun!
    KeyboardComponent instr_resp_1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent remove_grid
      Code Type = Auto->JS
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      Begin Routine:
        GridWorldComponents = [b_0_2, b_0_1, b_3_0, b_2_2, b_1_2, b_2_1, b_2_neg1, b_2_neg2, b_2_0, b_1_neg2, b_1_0, b_0_0, b_neg1_0, b_neg1_2, b_neg1_neg2, b_neg2_0, b_neg2_1, b_neg2_neg1, b_neg2_neg2, b_neg2_2, b_neg3_0, b_0_neg1, b_0_neg2, egg_left, egg_right]

        for thisComponent in GridWorldComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(False)

        AgentsComponents = [chick1] #agent1, agent2,
        if nchicks >= 2:
            AgentsComponents += [chick2]

        if nchicks >= 3:
            AgentsComponents += [chick3]

        for thisComponent in AgentsComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(False)
    ImageComponent start_egg
      image = stimuli/egg.png
      pos = (-0.175, 0.325)
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
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    ImageComponent start_chicken
      image = stimuli/chicken_down.png
      pos = (0.175, 0.325)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine start_3
    TextComponent start_instr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        EGG HUNT

        You and another player can move around to collect one of two eggs alone (worth 100 points) or cooperate to catch a chicken that can lay four eggs that you will split (worth 400 points total, or 200 points to each player)

        (Press any key to continue)
    KeyboardComponent instr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine computer_avatar
    CodeComponent reveal_avatar_3
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False

        p1_avatar_selection = p1_mouse.clicked_name[0]
        print(p1_avatar_selection)

        text_reveal_2 = visual.TextStim(win=win, name='text_reveal_2',
            text='PLAYER 2 choosing avatar...',
            font='Open Sans',
            pos=(0, .25), height=0.045, wrapWidth=None, ori=0.0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-1.0);
        text_reveal_2.setAutoDraw(True)

        choose_blue_2 = visual.ImageStim(
            win=win,
            name='choose_blue_2',
            image='stimuli/player-blue.png', mask=None, anchor='center',
            ori=0.0, pos=[random_avatar_pos[0]], size=(0.15, 0.15),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=True, depth=-2.0)
        choose_blue_2.setAutoDraw(True)

        choose_pink_2 = visual.ImageStim(
            win=win,
            name='choose_pink_2',
            image='stimuli/player-pink.png', mask=None, anchor='center',
            ori=0.0, pos=[random_avatar_pos[1]], size=(0.15, 0.15),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=True, depth=-3.0)
        choose_pink_2.setAutoDraw(True)

        choose_yellow_2 = visual.ImageStim(
            win=win,
            name='choose_yellow_2',
            image='stimuli/player-yellow.png', mask=None, anchor='center',
            ori=0.0, pos=[random_avatar_pos[2]], size=(0.15, 0.15),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=True, depth=-4.0)
        choose_yellow_2.setAutoDraw(True)

        if p1_avatar_selection == 'choose_pink':
            choose_pink_2.setOpacity(.5)
            agent1_img = 'stimuli/player-pink.png'
            agent2_img = np.random.choice(['stimuli/player-blue.png','stimuli/player-yellow.png'])
        if p1_avatar_selection == 'choose_yellow':
            choose_yellow_2.setOpacity(.5)
            agent1_img = 'stimuli/player-yellow.png'
            agent2_img = np.random.choice(['stimuli/player-blue.png','stimuli/player-pink.png'])
        elif p1_avatar_selection == 'choose_blue':
            choose_blue_2.setOpacity(.5)
            agent1_img = 'stimuli/player-blue.png'
            agent2_img = np.random.choice(['stimuli/player-pink.png','stimuli/player-yellow.png'])
        win.flip()

        core.wait(3)
        if agent2_img == 'stimuli/player-pink.png':
            choose_pink_2.setOpacity(.5)
        elif agent2_img == 'stimuli/player-yellow.png':
            choose_yellow_2.setOpacity(.5)
        elif agent2_img == 'stimuli/player-blue.png':
            choose_blue_2.setOpacity(.5)
        win.flip()
        core.wait(1)
      End Routine:
        choose_blue_2.setAutoDraw(False)
        choose_pink_2.setAutoDraw(False)
        choose_yellow_2.setAutoDraw(False)
        text_reveal_2.setAutoDraw(False)

        agent1 = visual.ImageStim(
            win=win,
            name='agent1',
            image=agent1_img, mask=None, anchor='center',
            ori=0.0, pos=agent1_pos, size=(0.1, 0.1), #autoDraw=True,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-10.0)

        agent2 = visual.ImageStim(
            win=win,
            name='agent2',
            image=agent2_img, mask=None, anchor='center',
            ori=0.0, pos=agent2_pos, size=(0.1, 0.1), #autoDraw=True,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-10.0)

        GridWorldComponents = [b_0_2, b_0_1, b_3_0, b_2_2, b_1_2, b_2_1, b_2_neg1, b_2_neg2, b_2_0, b_1_neg2, b_1_0, b_0_0, b_neg1_0, b_neg1_2, b_neg1_neg2, b_neg2_0, b_neg2_1, b_neg2_neg1, b_neg2_neg2, b_neg2_2, b_neg3_0, b_0_neg1, b_0_neg2, rabbit_left, rabbit_right]

        for thisComponent in GridWorldComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(True)

        AgentsComponents = [agent1, agent2, chick1]
        if nchicks >= 2:
            AgentsComponents += [chick2]

        if nchicks >= 3:
            AgentsComponents += [chick3]

        for thisComponent in AgentsComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(True)
  Routine you_are_p1
    TextComponent text
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        You are PLAYER 1


        Press any key to start
    KeyboardComponent continue_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_game
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        GridWorldComponents = [diode_square_white, b_0_2, b_0_1, b_3_0, b_2_2, b_1_2, b_2_1, b_2_neg1, b_2_neg2, b_2_0, b_1_neg2, b_1_0, b_0_0, b_neg1_0, b_neg1_2, b_neg1_neg2, b_neg2_0, b_neg2_1, b_neg2_neg1, b_neg2_neg2, b_neg2_2, b_neg3_0, b_0_neg1, b_0_neg2, egg_left, egg_right]

        for thisComponent in GridWorldComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(False)

        AgentsComponents = [agent1, agent2, agent1_indicator_text, agent2_indicator_text, chick1]
        if nchicks >= 2:
            AgentsComponents += [chick2]

        if nchicks >= 3:
            AgentsComponents += [chick3]

        for thisComponent in AgentsComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(False)

        end_text = f'Thanks for playing!\n\nPlayer 1 earned {agent1_score} points.\nPlayer 2 earned {agent2_score} points.\n\nPress any key to exit'
    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_text
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    KeyboardComponent end_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine get_ready
    KeyboardComponent start_exp_key
      allowedKeys = 'equal'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent get_ready_disp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Get ready...
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    CodeComponent trigger_time
      Code Type = Auto->JS
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      End Routine:
        trigger_time = globalClock.getTime()
        thisExp.addData('trigger_onset', trigger_time)
    CodeComponent round_counter
      Code Type = Auto->JS
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      Begin Routine:
        RoundCount = -1
  Routine p1_confirm
    TextComponent p1_ready
      letterHeight = 0.05
      pos = (0, .15)
      startVal [time (s)] = 0.0
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      text:
        PLAYER 1
        Are you ready to begin the next round?
    PolygonComponent diode_p1_ready
      anchor = bottom-center
      fillColor = white
      pos = (-1,-1)
      shape = rectangle
      size = (.45,.45)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent player1_ready_display
      image [set every repeat] = $agent1_imgs['stay']
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent p1_ready_resp
      allowedKeys = 'u','h','k','j','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent movement_key_text1
      letterHeight = 0.05
      pos = (0, -.15)
      startVal [time (s)] = 0.0
      text = Press any movement key to continue
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    CodeComponent round_counter2
      Code Type = Auto->JS
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      Begin Routine:
        RoundCount += 1
        display_percent_complete = f'{np.round(RoundCount*100/32,1)}% complete'
    TextComponent display_pct_txt
      letterHeight = 0.02
      pos = (.5, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $display_percent_complete
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  Routine p2_confirm
    TextComponent p2_ready
      letterHeight = 0.05
      pos = (0, .15)
      startVal [time (s)] = 0.0
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      text:
        PLAYER 2
        Are you ready to begin the next round?
    PolygonComponent diode_p2_ready
      anchor = bottom-center
      fillColor = white
      pos = (-1,-1)
      shape = rectangle
      size = (.45,.45)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent player2_ready_display
      image [set every repeat] = $agent2_imgs['stay']
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent p2_ready_resp
      allowedKeys = 'num_5','num_8','num_4','num_6','num_2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent movement_key_text2
      letterHeight = 0.05
      pos = (0, -.15)
      startVal [time (s)] = 0.0
      text = Press any movement key to continue
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    TextComponent display_pct_txt_2
      letterHeight = 0.02
      pos = (.5, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $display_percent_complete
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Flow
  Routine start_exp
  Routine start_1
  Routine get_ready
  LoopInitiator rounds loopType="TrialHandler"
    conditionsFile = rounds.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ntrials': 10},
      {'ntrials': 11},
      {'ntrials': 12},
      {'ntrials': 13},
      {'ntrials': 14},
      {'ntrials': 15},
      {'ntrials': 16},
      {'ntrials': 17},
      {'ntrials': 18},
      {'ntrials': 19},
      {'ntrials': 20},
      {'ntrials': 10},
      {'ntrials': 11},
      {'ntrials': 12},
      {'ntrials': 13},
      {'ntrials': 14},
      {'ntrials': 15},
      {'ntrials': 16},
      {'ntrials': 17},
      {'ntrials': 18},
      {'ntrials': 19},
      {'ntrials': 20},
      {'ntrials': 10},
      {'ntrials': 11},
      {'ntrials': 12},
      {'ntrials': 13},
      {'ntrials': 14},
      {'ntrials': 15},
      {'ntrials': 16},
      {'ntrials': 17},
      {'ntrials': 18},
      {'ntrials': 19},
      {'ntrials': 20}]
    Routine p1_confirm
    Routine p2_confirm
    Routine start_round
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = ntrials
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      Routine move_chick1
      LoopInitiator player1_first loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = player1_turn
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        Routine move_agent1
        Routine move_agent2
      LoopTerminator player1_first
      LoopInitiator player2_first loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = player2_turn
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        Routine move_agent2
        Routine move_agent1
      LoopTerminator player2_first
      Routine end_turns
    LoopTerminator trials
    Routine end_round
  LoopTerminator rounds
  Routine end_game
