PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'data/sub%s-%s_task-%s_%s' % (expInfo['player'], expInfo['patient id'], expName, expInfo['date'])
  Experiment info = {'patient id': '', 'player': '[1,2]', 'playerav': '[1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.1.2
  Window size (pixels) = [1536, 864]
  expName = practice-egghunt
  keyboardBackend = ioHub
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Routines
  Routine start_exp
    CodeComponent draw_world
      Code Type = Auto->JS
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      Begin Experiment:
        # --- Initialize components for "GridWorld" ---
        b_0_2 = visual.Rect(
            win=win, name='b_0_2',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(0, .3), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_0_1 = visual.Rect(
            win=win, name='b_0_1',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(0, .15), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_3_0 = visual.Rect(
            win=win, name='b_3_0',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(.45, 0), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_2_2 = visual.Rect(
            win=win, name='b_2_2',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(.3, .3), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_1_2 = visual.Rect(
            win=win, name='b_1_2',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(.15, .3), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_2_1 = visual.Rect(
            win=win, name='b_2_1',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(.3, .15), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_2_neg1 = visual.Rect(
            win=win, name='b_2_neg1',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(.3, -.15), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_2_neg2 = visual.Rect(
            win=win, name='b_2_neg2',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(.3, -.3), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_2_0 = visual.Rect(
            win=win, name='b_2_0',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(.3, 0), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_1_neg2 = visual.Rect(
            win=win, name='b_1_neg2',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(.15, -.3), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_1_0 = visual.Rect(
            win=win, name='b_1_0',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(.15, 0), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_0_0 = visual.Rect(
            win=win, name='b_0_0',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(0, 0), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_neg1_0 = visual.Rect(
            win=win, name='b_neg1_0',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(-.15, 0), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_neg1_2 = visual.Rect(
            win=win, name='b_neg1_2',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(-.15, .3), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_neg1_neg2 = visual.Rect(
            win=win, name='b_neg1_neg2',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(-.15, -.3), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_neg2_0 = visual.Rect(
            win=win, name='b_neg2_0',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(-.3, 0), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_neg2_1 = visual.Rect(
            win=win, name='b_neg2_1',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(-.3, .15), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_neg2_neg1 = visual.Rect(
            win=win, name='b_neg2_neg1',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(-.3, -.15), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_neg2_neg2 = visual.Rect(
            win=win, name='b_neg2_neg2',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(-.3, -.3), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_neg2_2 = visual.Rect(
            win=win, name='b_neg2_2',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(-.3, .3), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_neg3_0 = visual.Rect(
            win=win, name='b_neg3_0',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(-.45, 0), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_0_neg1 = visual.Rect(
            win=win, name='b_0_neg1',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(0, -.15), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)
        b_0_neg2 = visual.Rect(
            win=win, name='b_0_neg2',
            width=(0.15, 0.15)[0], height=(0.15, 0.15)[1],
            ori=0.0, pos=(0, -.3), anchor='center', autoDraw=True,
            lineWidth=5.0,     colorSpace='rgb',  lineColor='black', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)

        egg_left = visual.ImageStim(
            win=win,
            name='egg_left',
            image='stimuli/egg.png', mask=None, anchor='center',
            ori=0.0, pos=(-.45, 0), size=(0.06, 0.06), #autoDraw=True,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-3.0)

        egg_right = visual.ImageStim(
            win=win,
            name='egg_right',
            image='stimuli/egg.png', mask=None, anchor='center',
            ori=0.0, pos=(.45, 0), size=(0.06, 0.06), #autoDraw=True,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-3.0)

        GridWorldComponents = [b_0_2, b_0_1, b_3_0, b_2_2, b_1_2, b_2_1, b_2_neg1, b_2_neg2, b_2_0, b_1_neg2, b_1_0, b_0_0, b_neg1_0, b_neg1_2, b_neg1_neg2, b_neg2_0, b_neg2_1, b_neg2_neg1, b_neg2_neg2, b_neg2_2, b_neg3_0, b_0_neg1, b_0_neg2, egg_left, egg_right]
        for thisComponent in GridWorldComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(False)
      End Experiment:
        # --- Ending "GridWorld" ---
        GridWorldComponents = [diode_square_white, egg_left, egg_right, b_0_2, b_0_1, b_3_0, b_2_2, b_1_2, b_2_1, b_2_neg1, b_2_neg2, b_2_0, b_1_neg2, b_1_0, b_0_0, b_neg1_0, b_neg1_2, b_neg1_neg2, b_neg2_0, b_neg2_1, b_neg2_neg1, b_neg2_neg2, b_neg2_2, b_neg3_0, b_0_neg1, b_0_neg2]

        for thisComponent in GridWorldComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(False)
    CodeComponent draw_agents
      Code Type = Auto->JS
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      Before Experiment:
        agent1_score = 0
        agent2_score = 0
      Begin Experiment:
        avatar1_no = expInfo['playerav']
        agent1_imgs = {'stay':f'stimuli/avatars/avatar-{avatar1_no}_down.png',
                       'up':f'stimuli/avatars/avatar-{avatar1_no}_up.png',
                       'down':f'stimuli/avatars/avatar-{avatar1_no}_down.png',
                       'left':f'stimuli/avatars/avatar-{avatar1_no}_left.png',
                       'right':f'stimuli/avatars/avatar-{avatar1_no}_right.png'}
        avatar2_no = 17
        agent2_imgs = {'stay':f'stimuli/avatars/avatar-{avatar2_no}_down.png',
                       'up':f'stimuli/avatars/avatar-{avatar2_no}_up.png',
                       'down':f'stimuli/avatars/avatar-{avatar2_no}_down.png',
                       'left':f'stimuli/avatars/avatar-{avatar2_no}_left.png',
                       'right':f'stimuli/avatars/avatar-{avatar2_no}_right.png'}

        PLAYER_START_IMG = agent1_imgs['down']

        agent1 = visual.ImageStim(
            win=win,
            name='agent1',
            image=agent1_imgs['down'], mask=None, anchor='center',
            ori=0.0, pos=[-.3,-.3], size=(0.1, 0.1), #autoDraw=True,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-10.0)

        agent2 = visual.ImageStim(
            win=win,
            name='agent2',
            image=agent2_imgs['down'], mask=None, anchor='center',
            ori=0.0, pos=[.3,.3], size=(0.1, 0.1), #autoDraw=True,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-10.0)


        #agent_stims = ['stimuli/player-pink.png', 'stimuli/player-yellow.png','stimuli/player-pink.png', 'stimuli/player-yellow.png']
        #agents_imgs = list(np.random.permutation(agent_stim))

        #agent1 = visual.ShapeStim(
        #    win=win, name='agent1',
        #    size=(0.1, 0.1), vertices='circle',
        #    ori=0.0, pos=agent1_pos, anchor='center', autoDraw=True,
        #    lineWidth=1.0,     colorSpace='rgb',  lineColor='black', fillColor='red',
        #    opacity=None, depth=-5.0, interpolate=True)
        #agent2 = visual.ShapeStim(
        #    win=win, name='agent2',
        #    size=(0.1, 0.1), vertices='circle',
        #    ori=0.0, pos=agent2_pos, anchor='center', autoDraw=True,
        #    lineWidth=1.0,     colorSpace='rgb',  lineColor='black', fillColor='blue',
        #    opacity=None, depth=-5.0, interpolate=True)

        #
      End Experiment:
        # --- Ending "Agents" ---
        AgentsComponents = [agent1, agent2, chick1]
        if nchicks >= 2:
            AgentsComponents += [chick2]

        if nchicks >= 3:
            AgentsComponents += [chick3]

        for thisComponent in AgentsComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(False)
      End Routine:
        AgentsComponents = [chick1, agent1, agent2]

        for thisComponent in AgentsComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(False)
    CodeComponent draw_chick
      Code Type = Auto->JS
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      Begin Experiment:
        nchicks = 1 #int(expInfo['nchicks'])

        chick1_pos = [0., 0.]
        chick2_pos = [0., 0.]
        chick3_pos = [0., 0.]

        #chick_stim = ['stimuli/chick-green.png', 'stimuli/chick-blue.png', 'stimuli/chick-red.png']
        #chick1_img, chick2_img, chick3_img = np.random.permutation(chick_stim)
        chick1_imgs = {'stay':f'stimuli/chicken_down.png',
                       'up':f'stimuli/chicken_up.png',
                       'down':f'stimuli/chicken_down.png',
                       'left':f'stimuli/chicken_left.png',
                       'right':f'stimuli/chicken_right.png'}

        chick1 = visual.ImageStim(
            win=win,
            name='chick1',
            image=chick1_imgs['down'], mask=None, anchor='center',
            ori=0.0, pos=chick1_pos, size=(0.09, 0.09), #autoDraw=True,
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-2.0)
        chick1.setAutoDraw(True)

        #if nchicks >= 2:
        #    chick2 = visual.ImageStim(
        #    win=win,
        #    name='chick2',
        #    image=chick2_img, mask=None, anchor='center',
        #    ori=0.0, pos=chick2_pos, size=(0.1, 0.1), #autoDraw=True,
        #    color=[1,1,1], colorSpace='rgb', opacity=None,
        #    flipHoriz=False, flipVert=False,
        #    texRes=128.0, interpolate=False, depth=-2.0)
        #    chick2.setAutoDraw(True)
        #
        #if nchicks >= 3:
        #    chick3 = visual.ImageStim(
        #    win=win,
        #    name='chick3',
        #    image=chick3_img, mask=None, anchor='center',
        #    ori=0.0, pos=chick3_pos, size=(0.1, 0.1), #autoDraw=True,
        #    color=[1,1,1], colorSpace='rgb', opacity=None,
        #    flipHoriz=False, flipVert=False,
        #    texRes=128.0, interpolate=False, depth=-2.0)
        #    chick3.setAutoDraw(True)
        #
        #stag = visual.Rect(
        #    win=win, name='stag',
        #    width=(0.1, 0.1)[0], height=(0.1, 0.1)[1],
        #    ori=0.0, pos=stag1_pos, anchor='center', autoDraw=True,
        #    lineWidth=1.0,     colorSpace='rgb',  lineColor='black', fillColor='yellow',
        #    opacity=None, depth=-2.0, interpolate=True)
    CodeComponent get_coords
      Code Type = Auto->JS
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      Before Experiment:
        import pandas as pd, numpy as np

        try:
            coord_df = pd.read_csv('C:\\Users\\Kevin\\Desktop\\EGGHUNT\\egghunttask\\coord_key.csv')
        except:
            coord_df = pd.read_csv('coord_key.csv')

        def convert_coords(in_x, in_y, revert=False, agent='computer'):
            # input true coords (e.g., [.15, 0])
            # output possible moves and grid coords
            if agent == 'computer':

                if revert:
                    out_x = coord_df[coord_df['x']==in_x][coord_df['y']==in_y]['true_x'].iloc[0]
                    out_y = coord_df[coord_df['y']==in_y][coord_df['x']==in_x]['true_y'].iloc[0]
                    possiblemoves = list(coord_df[coord_df['y']==in_y][coord_df['x']==in_x]['possiblemovescomp'].iloc[0].split(";"))
                else:
                    out_x = coord_df[coord_df['true_x']==in_x][coord_df['true_y']==in_y]['x'].iloc[0]
                    out_y = coord_df[coord_df['true_y']==in_y][coord_df['true_x']==in_x]['y'].iloc[0]
                    possiblemoves = list(coord_df[coord_df['true_y']==in_y][coord_df['true_x']==in_x]['possiblemovescomp'].iloc[0].split(";"))

            elif agent == 'player1':
                if revert:
                    out_x = coord_df[coord_df['x']==in_x][coord_df['y']==in_y]['true_x'].iloc[0]
                    out_y = coord_df[coord_df['y']==in_y][coord_df['x']==in_x]['true_y'].iloc[0]
                    possiblemoves = list(coord_df[coord_df['y']==in_y][coord_df['x']==in_x]['possiblemoves1'].iloc[0].split(";"))
                else:
                    out_x = coord_df[coord_df['true_x']==in_x][coord_df['true_y']==in_y]['x'].iloc[0]
                    out_y = coord_df[coord_df['true_y']==in_y][coord_df['true_x']==in_x]['y'].iloc[0]
                    possiblemoves = list(coord_df[coord_df['true_y']==in_y][coord_df['true_x']==in_x]['possiblemoves1'].iloc[0].split(";"))

            elif agent == 'player2':
                if revert:
                    out_x = coord_df[coord_df['x']==in_x][coord_df['y']==in_y]['true_x'].iloc[0]
                    out_y = coord_df[coord_df['y']==in_y][coord_df['x']==in_x]['true_y'].iloc[0]
                    possiblemoves = list(coord_df[coord_df['y']==in_y][coord_df['x']==in_x]['possiblemoves2'].iloc[0].split(";"))
                else:
                    out_x = coord_df[coord_df['true_x']==in_x][coord_df['true_y']==in_y]['x'].iloc[0]
                    out_y = coord_df[coord_df['true_y']==in_y][coord_df['true_x']==in_x]['y'].iloc[0]
                    possiblemoves = list(coord_df[coord_df['true_y']==in_y][coord_df['true_x']==in_x]['possiblemoves2'].iloc[0].split(";"))

            return out_x, out_y, possiblemoves

        def convert_moves(next_move, revert=False):
            # converts string (e.g., 'left') to position (e.g., -.15)
            if revert:
                if next_move == 'left' or next_move == 'num_4' or next_move == 'h':
                    x_shift = -1
                    y_shift = 0
                elif next_move == 'right' or next_move == 'num_6' or next_move == 'k':
                    x_shift = 1
                    y_shift = 0
                elif next_move == 'up' or next_move == 'num_8' or next_move == 'u':
                    y_shift = 1
                    x_shift = 0
                elif next_move == 'down' or next_move == 'num_2' or next_move == 'n':
                    y_shift = -1
                    x_shift = 0
                elif next_move == 'space' or next_move == 'num_5' or next_move == 'j':
                    y_shift = 0
                    x_shift = 0

            else:
                if next_move == 'left' or next_move == 'num_4' or next_move == 'h':
                    x_shift = -.15
                    y_shift = 0
                elif next_move == 'right' or next_move == 'num_6' or next_move == 'k':
                    x_shift = .15
                    y_shift = 0
                elif next_move == 'up' or next_move == 'num_8' or next_move == 'u':
                    y_shift = .15
                    x_shift = 0
                elif next_move == 'down' or next_move == 'num_2' or next_move == 'n':
                    y_shift = -.15
                    x_shift = 0
                elif next_move == 'space' or next_move == 'num_5' or next_move == 'j':
                    y_shift = 0
                    x_shift = 0

            return x_shift, y_shift

        def get_adjacent_tiles(stag_x, stag_y):
            # input stag coords, output list of adjacent coords
            grid_x, grid_y, possiblemoves = convert_coords(stag_x, stag_y)

            adjacent_spaces = []
            for move in possiblemoves:
                x_shift, y_shift = convert_moves(move)
                adjacent_spaces += [[stag_x+x_shift, stag_y+y_shift]]

            return adjacent_spaces
    CodeComponent def_interaction
      Code Type = Auto->JS
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      Begin Experiment:
        #if (expInfo['interact'] == 'y') or (expInfo['interact'] == 'yes') or (expInfo['interact'] == '1'):
        #    interaction_bool = 1
        #    nointeraction_bool = 0
        #    print('interacting...')

        interaction_bool = 1
        nointeraction_bool = 0
        print('interacting...')
        #if int(expInfo['player2']) == 3987:
        #    interaction_bool = 0
        #    nointeraction_bool = 1
        #    print('NOT interacting...')
        #else:
        #    interaction_bool = 1
        #    nointeraction_bool = 0
        #    print('interacting...')
    CodeComponent hide_mouse_cursor
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False
      End Experiment:
        win.mouseVisible = True
    CodeComponent diode_white
      Code Type = Auto->JS
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      Begin Experiment:
        diode_square_white = visual.Rect(
            win=win, name='diode_square_white',units='norm',
            width=(.45,.45)[0], height=(.45,.45)[1],
            ori=0.0, pos=(-1,-1), anchor='bottom-center',
            lineWidth=1.0,     colorSpace='rgb',  lineColor=None, fillColor='white',
            opacity=None, depth=-5.0, interpolate=True)
    CodeComponent set_keys
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['player'] == '1':
            player_num = '1'
            comp_num = '2'

            up_key = 'u'
            right_key = 'k'
            left_key = 'h'
            down_key = 'n'
            stay_key = 'j'
            moving_key_instr_txt = {'up':'Use \'u\' to move up',
                                'left':'Use \'h\' to move left',
                                'stay':'Use \'j\' to stay in place',
                                'right':'Use \'k\' to move right',
                                'down':'Use \'n\' to move down'}

        elif expInfo['player'] == '2':
            player_num = '2'
            comp_num = '1'

            up_key = 'num_8'
            right_key = 'num_6'
            left_key = 'num_4'
            down_key = 'num_2'
            stay_key = 'num_5'
            moving_key_instr_txt = {'up':'Use \'8\' to move up',
                                'left':'Use \'4\' to move left',
                                'stay':'Use \'5\' to stay in place',
                                'right':'Use \'6\' to move right',
                                'down':'Use \'2\' to move down'}

        PLAYER_TURN_TXT = f'PLAYER {player_num} TURN'
        COMP_TURN_TXT = f'PLAYER {comp_num} TURN'
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  Routine move_chick1
    CodeComponent set_trial_text
      Code Type = Auto->JS
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      Begin Experiment:
        chick1_instr_txt = 'CHICKEN TURN'
      Begin Routine:
        instr_chick.bold = True
    CodeComponent change_chick
      Code Type = Auto->JS
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      Begin Experiment:
        count1_chick = 0
      Begin Routine:
        instr_chick.bold = True
        chick_jitter = np.random.uniform(2,3)
        chick_timer = core.Clock()

        count1_chick += 1
        if count1_chick == 1:
            # down
            x_shift = 0
            y_shift = -.15
            this_chick_move_4 = 'down'
            this_chick_instr_txt = 'The chicken moves first'
        elif count1_chick == 2:
            # down
            x_shift = 0
            y_shift = -.15
            this_chick_move_4 = 'down'
            this_chick_instr_txt = 'It is the chicken\'s turn now'
        elif count1_chick == 3:
            # down
            x_shift = 0
            y_shift = 0
            this_chick_move_4 = 'stay'
            this_chick_instr_txt = 'It is the chicken\'s turn now'
      Each Frame:
        if chick_timer.getTime()>chick_jitter:

            chick1.image = chick1_imgs[this_chick_move_4]
            chick1_pos = [chick1_pos[0]+x_shift, chick1_pos[1]+y_shift]
            chick1.setPos(chick1_pos, log=True)

            win.flip()
            core.wait(1)

            chick1.image = chick1_imgs['down']
            win.flip()
            continueRoutine = False
    TextComponent instr_chick
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $chick1_instr_txt
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    TextComponent instr_chick_turn_catch_chick
      color = black
      letterHeight = 0.04
      pos = (0, -.425)
      startVal [time (s)] = 0
      text [set every repeat] = $this_chick_instr_txt
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  Routine overview
    CodeComponent instr_dict
      Code Type = Auto->JS
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      Begin Experiment:
        start_egg_1 = visual.ImageStim(
            win=win,
            name='start_egg_1',
            image='stimuli/egg.png', mask=None, anchor='center',
            ori=0.0, pos=(0, -0.15), size=(0.075, 0.075),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=True, depth=0.0)

        start_chicken_2 = visual.ImageStim(
            win=win,
            name='start_chicken_2',
            image='stimuli/chicken_down.png', mask=None, anchor='center',
            ori=0.0, pos=(0, -.15), size=(0.1, 0.1),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=True, depth=-1.0)

        instr_back_txt = visual.TextStim(win=win, name='back_forth',
            text='',
            font='Arial',
            pos=(0, -.4), height=0.05, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        instr_back_txt.text = '\nPress RIGHT ARROW to continue.'
        instr_back_txt.autoDraw = True
        win.flip()
      Begin Routine:
        instr_strs = {}
        instr_strs[0] = f'In this game, you will collect as many eggs as you can to earn points! Points will be tallied and converted to real money at the end of the study.'
        instr_strs[1] = f'You will be paired with another player. This player is also trying to earn points. You will take turns moving around the screen.'
        instr_strs[2] = f'In this game, eggs are worth 100 points. You can collect an egg by moving to a tile with an egg.'
        instr_strs[3] = f'You can also catch a chicken if you and the other player move to tile that are next to the chicken. Catching a chicken is worth 400 points, which is then split between the players (200 points each).'
        instr_strs[4] = 'On each round, both of you will start with 150 points. 10 points will be subtracted for every turn taken. For example, 50 points will be subtracted from your score if you take 5 turns to end the round. Each round will end when you or the other player collects an egg or both of you catch the chicken together. Keep in mind that some rounds can end before you collect eggs or catch a chicken.'
        instr_disp_txt = visual.TextStim(win=win, name='instructions',
            text='',
            font='Arial',
            pos=(0, 0), height=0.04, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);
        instr_disp_txt.text = instr_strs[0]
        instr_disp_txt.autoDraw = True

        curr_instr = 0
      Each Frame:
        instr_keys = event.getKeys()

        if curr_instr == 0:
            instr_back_txt.text = '\nPress RIGHT ARROW to continue.'

            if 'right' in instr_keys or 'k' in instr_keys:
                instr_keyboard.clearEvents()
                curr_instr += 1
                instr_disp_txt.text = instr_strs[curr_instr]
                instr_back_txt.autoDraw = True
                win.flip()
        elif curr_instr == 4:
            instr_back_txt.text = 'Press LEFT ARROW to go back.\nPress RIGHT ARROW to continue.'
            if 'right' in instr_keys or 'k' in instr_keys:
                instr_keyboard.clearEvents()
                continueRoutine = False
            elif 'left' in instr_keys or 'h' in instr_keys:
                instr_keyboard.clearEvents()
                curr_instr -= 1
                instr_disp_txt.text = instr_strs[curr_instr]

                # if prev instr == 0, then remove left arrow as option
                if curr_instr == 0:
                    instr_back_txt.autoDraw = False
                else:
                    instr_back_txt.autoDraw = True

                win.flip()
        else:

            if curr_instr == 2:
                start_egg_1.setAutoDraw(True)
            elif curr_instr == 3:
                start_chicken_2.setAutoDraw(True)
            instr_back_txt.text = 'Press LEFT ARROW to go back.\nPress RIGHT ARROW to continue.'
            if 'right' in instr_keys or 'k' in instr_keys:
                instr_keyboard.clearEvents()
                curr_instr += 1
                instr_disp_txt.text = instr_strs[curr_instr]
                instr_back_txt.autoDraw = True
                win.flip()
                start_egg_1.setAutoDraw(False)
                start_chicken_2.setAutoDraw(False)
            elif 'left' in instr_keys or 'h' in instr_keys:
                instr_keyboard.clearEvents()
                curr_instr -= 1
                instr_disp_txt.text = instr_strs[curr_instr]

                start_egg_1.setAutoDraw(False)
                start_chicken_2.setAutoDraw(False)
                # if prev instr == 0, then remove left arrow as option
                if curr_instr == 0:
                    instr_back_txt.text = '\nPress RIGHT ARROW to continue.'
                else:
                    instr_back_txt.text = 'Press LEFT ARROW to go back.\nPress RIGHT ARROW to continue.'

                win.flip()
      End Routine:
        instr_back_txt.autoDraw = False
        instr_disp_txt.autoDraw = False


        start_chicken_2.setAutoDraw(False)
    KeyboardComponent instr_keyboard
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine egg_self_start
    CodeComponent reposition
      Code Type = Auto->JS
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      End Routine:
        agent1_pos = [-.3, -.3]
        agent2_pos = [.15, .3]
        chick1_pos = [0, 0]

        chick1.setPos(chick1_pos, log=True)
        agent1.setPos(agent1_pos, log=True)
        agent2.setPos(agent2_pos, log=True)
    CodeComponent draw_trial_txt
      Code Type = Auto->JS
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      End Routine:
        trial_text = visual.TextStim(win=win, name='trial_text',
            text='',
            font='Open Sans',
            pos=(.55, .35), height=0.04, wrapWidth=None, ori=0.0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-1.0);
    CodeComponent player_indicators
      Code Type = Auto->JS
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      Begin Routine:
        agent1_indicator_text = visual.TextStim(win=win,
            name='agent1_indicator_text',
            text=f'\n\n\n\n\n\n\nPLAYER {player_num}',
            font='Open Sans',
            pos=[0,0],
            height=0.0145, wrapWidth=None, ori=0.0,
            color='black', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-20.0);
        agent2_indicator_text = visual.TextStim(win=win,
            name='agent2_indicator_text',
            text=f'\n\n\n\n\n\n\nPLAYER {comp_num}',
            font='Open Sans',
            pos=[0,0],
            height=0.0145, wrapWidth=None, ori=0.0,
            color='black', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-20.0);
        agent1_indicator_text.bold = True
        agent2_indicator_text.bold = True

        agent1_indicator_text.setAutoDraw(False)
        agent2_indicator_text.setAutoDraw(False)
      End Routine:
        agent1_indicator_text.setPos(agent1_pos)
        agent1_indicator_text.setAutoDraw(True)
        agent2_indicator_text.setPos(agent2_pos)
        agent2_indicator_text.setAutoDraw(True)
    TextComponent start_round_txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $start_egg_self_txt
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    CodeComponent set_avatars
      Code Type = Auto->JS
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      End Routine:
        GridWorldComponents = [diode_square_white, b_0_2, b_0_1, b_3_0, b_2_2, b_1_2, b_2_1, b_2_neg1, b_2_neg2, b_2_0, b_1_neg2, b_1_0, b_0_0, b_neg1_0, b_neg1_2, b_neg1_neg2, b_neg2_0, b_neg2_1, b_neg2_neg1, b_neg2_neg2, b_neg2_2, b_neg3_0, b_0_neg1, b_0_neg2, egg_left, egg_right]

        for thisComponent in GridWorldComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(True)

        AgentsComponents = [agent1, agent2]

        for thisComponent in AgentsComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(True)
    PolygonComponent diode_square_round_start
      anchor = bottom-center
      fillColor = black
      pos = (-1,-1)
      shape = rectangle
      size = (.45,.45)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent start_round_player_display
      image [set every repeat] = $PLAYER_START_IMG
      pos = (0, -.1)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent round_start
      Code Type = Auto->JS
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      Begin Experiment:
        start_egg_self_txt = f'You are PLAYER {player_num}.\nTo begin this tutorial, let\'s try to collect an egg for 100 points. On the next screen, follow the instructions in red to collect one of the two eggs by moving to its location with your avatar.\n\n\n\n\n\nPress RIGHT ARROW to continue.'
    KeyboardComponent key_resp_4
      allowedKeys = 'right','k'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine agent1_egg_self
    KeyboardComponent resp_agent1
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = nothing
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    TextComponent instr_agent1
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0
      text [set every repeat] = $PLAYER_TURN_TXT
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    CodeComponent change_agent1
      Code Type = Auto->JS
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      Begin Experiment:
        count1 = 0
      Begin Routine:
        agent1_jitter = np.random.uniform(1,1.5)
        thisExp.addData('agent1_jitter', agent1_jitter)

        instr_agent1.bold = True
        agent1_indicator_text.color = "red"

        # remove possible move if adjacent to another agent
        count1 += 1
        if count1 == 1:
            possiblemoves = [up_key]
            this_instr_txt = f'Your turn. Press the {up_key.replace("num_","")} key to move up'
        elif count1 == 2:
            possiblemoves = [up_key]
            this_instr_txt = f'Your turn. Press the {up_key.replace("num_","")} key to move up'
        elif count1 == 3:
            possiblemoves = [left_key]
            this_instr_txt = f'Your turn.\nPress the {left_key.replace("num_","")} key to move left and collect the egg'

        this_agent1_move = ''
      Each Frame:
        current_agent1_keyresp = resp_agent1.getKeys(clear=True)
        if resp_agent1.keys == 'escape':
            core.quit()
        if current_agent1_keyresp:
             if resp_agent1.keys in possiblemoves:
                if resp_agent1.keys == 'h' or resp_agent1.keys == 'num_4':
                    this_agent1_move = 'left'
                    agent1_pos = [agent1_pos[0]-.15, agent1_pos[1]]
                    agent1.image = agent1_imgs['left']

                    win.flip()
                elif resp_agent1.keys == 'k' or resp_agent1.keys == 'num_6':
                    this_agent1_move = 'right'
                    agent1_pos = [agent1_pos[0]+.15, agent1_pos[1]]
                    agent1.image = agent1_imgs['right']

                    win.flip()
                elif resp_agent1.keys == 'u' or resp_agent1.keys == 'num_8':
                    this_agent1_move = 'up'
                    agent1_pos = [agent1_pos[0], agent1_pos[1]+.15]
                    agent1.image = agent1_imgs['up']

                    win.flip()
                elif resp_agent1.keys == 'n' or resp_agent1.keys == 'num_2':
                    this_agent1_move = 'down'
                    agent1_pos = [agent1_pos[0], agent1_pos[1]-.15]
                    agent1.image = agent1_imgs['down']

                    win.flip()
                else:
                    this_agent1_move = 'null'
                    agent1.image = agent1_imgs['down']

                    win.flip()

                agent1.setPos(agent1_pos, log=True)
                agent1_indicator_text.setPos(agent1_pos, log=True)

                if agent1_pos[0] > .3:
                    egg_right.setAutoDraw(False)
                if agent1_pos[0] < -.3:
                    egg_left.setAutoDraw(False)
                win.flip()
                continueRoutine = False
      End Routine:
        if this_agent1_move in ['up','down','left','right']:
            thisExp.addData(f'agent1_action', this_agent1_move)
        else:
            thisExp.addData(f'agent1_action', 'null')

        core.wait(agent1_jitter)
        agent1.image = agent1_imgs['down']
        win.flip()

        agent1_indicator_text.color = "black"
    TextComponent instr_display_egg_self
      color = black
      letterHeight = 0.04
      pos = (0, -.425)
      startVal [time (s)] = 0
      text [set every repeat] = $this_instr_txt
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
  Routine egg_self_end
    TextComponent end_txt_egg_self
      letterHeight = 0.04
      startVal [time (s)] = 2
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      text:
        Notice how you got to the egg before the other player. This earned you 100 points, but the other player did not receive any additional points. You both started with 150 points, but took 3 turns (so you lost 30 points). In total, you received 220 points, but the other player only received 120 points.

        On other rounds, the other player may collect an egg before you. Let's see an example of how that could play out.

        Press RIGHT ARROW to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'right','k'
      forceEndRoutine = True
      startVal [time (s)] = 5
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    CodeComponent undraw_grid
      Code Type = Auto->JS
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      Begin Routine:
        GridWorldComponents = [b_0_2, b_0_1, b_3_0, b_2_2, b_1_2, b_2_1, b_2_neg1, b_2_neg2, b_2_0, b_1_neg2, b_1_0, b_0_0, b_neg1_0, b_neg1_2, b_neg1_neg2, b_neg2_0, b_neg2_1, b_neg2_neg1, b_neg2_neg2, b_neg2_2, b_neg3_0, b_0_neg1, b_0_neg2, egg_left, egg_right]

        for thisComponent in GridWorldComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(False)

        AgentsComponents = [chick1, agent1, agent2]

        for thisComponent in AgentsComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(False)
      End Routine:
        GridWorldComponents = [b_0_2, b_0_1, b_3_0, b_2_2, b_1_2, b_2_1, b_2_neg1, b_2_neg2, b_2_0, b_1_neg2, b_1_0, b_0_0, b_neg1_0, b_neg1_2, b_neg1_neg2, b_neg2_0, b_neg2_1, b_neg2_neg1, b_neg2_neg2, b_neg2_2, b_neg3_0, b_0_neg1, b_0_neg2, egg_left, egg_right]

        for thisComponent in GridWorldComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(True)

        AgentsComponents = [agent1, agent2]

        for thisComponent in AgentsComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(True)
    CodeComponent reposition_2
      Code Type = Auto->JS
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      End Routine:
        agent1_pos = [.15, -.3]
        agent2_pos = [-.15, 0]
        chick1_pos = [0, .3]

        chick1.setPos(chick1_pos, log=True)
        agent1.setPos(agent1_pos, log=True)
        agent2.setPos(agent2_pos, log=True)
    CodeComponent draw_trial_txt_2
      Code Type = Auto->JS
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      End Routine:
        trial_text = visual.TextStim(win=win, name='trial_text',
            text='',
            font='Open Sans',
            pos=(.55, .35), height=0.04, wrapWidth=None, ori=0.0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-1.0);
    CodeComponent player_indicators_2
      Code Type = Auto->JS
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      Begin Routine:
        agent1_indicator_text.setAutoDraw(False)
        agent2_indicator_text.setAutoDraw(False)
      End Routine:
        agent1_indicator_text.setPos(agent1_pos)
        agent1_indicator_text.setAutoDraw(True)
        agent2_indicator_text.setPos(agent2_pos)
        agent2_indicator_text.setAutoDraw(True)
    CodeComponent disp_points
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['player'] == '1':
            agent1_pts = 100+(150-30)
            agent2_pts = 150-30
        elif expInfo['player'] == '2':
            agent1_pts = 150-30
            agent2_pts = 100+(150-30)


        agent1_complete_text = f'PLAYER 1:\n+{agent1_pts} points\n\n'
        agent2_complete_text = f'PLAYER 2:\n+{agent2_pts} points'

        round_complete_text = f'ROUND COMPLETED\n\n' + agent1_complete_text + agent2_complete_text
    TextComponent end_text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $round_complete_text
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  Routine comp_egg_other
    TextComponent instr_computer_2
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0
      text [set every repeat] = $COMP_TURN_TXT
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    CodeComponent change_computer_2
      Code Type = Auto->JS
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      Begin Experiment:
        count2_comp = 0
      Begin Routine:
        instr_computer_2.bold = True
        agent2_indicator_text.color = "red"
        timer2 = core.Clock()

        count2_comp += 1
        if count2_comp == 1:
            # left
            x_shift = -.15
            y_shift = 0
            this_comp_move_2 = 'left'
            this_comp_instr_txt = 'It is the other player\'s turn now'
        elif count2_comp == 2:
            # left
            x_shift = -.15
            y_shift = 0
            this_comp_move_2 = 'left'
            this_comp_instr_txt = 'It is the other player\'s turn now'
      Each Frame:
        if timer2.getTime()>2:

            agent2.image = agent2_imgs[this_comp_move_2]
            agent2_pos = [agent2_pos[0]+x_shift, agent2_pos[1]+y_shift]
            agent2.setPos(agent2_pos, log=True)
            agent2_indicator_text.setPos(agent2_pos, log=True)

            if agent2_pos[0] > .3:
                egg_right.setAutoDraw(False)
            if agent2_pos[0] < -.3:
                egg_left.setAutoDraw(False)
            win.flip()
            core.wait(1)

            agent2.image = agent2_imgs['down']
            win.flip()
            continueRoutine = False
      End Routine:
        agent2_indicator_text.color = "black"
    TextComponent instr_comp_turn_egg_other
      color = black
      letterHeight = 0.04
      pos = (0, -.425)
      startVal [time (s)] = 0
      text [set every repeat] = $this_comp_instr_txt
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  Routine comp_egg_self
    TextComponent instr_computer
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0
      text [set every repeat] = $COMP_TURN_TXT
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    CodeComponent change_computer
      Code Type = Auto->JS
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      Begin Experiment:
        count1_comp = 0
      Begin Routine:
        instr_computer.bold = True
        agent2_indicator_text.color = "red"
        timer1 = core.Clock()

        count1_comp += 1
        if count1_comp == 1:
            # right
            x_shift = .15
            y_shift = 0
            this_comp_move_1 = 'right'
            this_comp_instr_txt = 'It is the other player\'s turn now'
        elif count1_comp == 2:
            # down
            x_shift = 0
            y_shift = -.15
            this_comp_move_1 = 'down'
            this_comp_instr_txt = 'It is the other player\'s turn now'
        elif count1_comp == 3:
            # down
            x_shift = 0
            y_shift = -.15
            this_comp_move_1 = 'down'
            this_comp_instr_txt = 'It is the other player\'s turn now'
      Each Frame:
        if timer1.getTime()>2:

            agent2.image = agent2_imgs[this_comp_move_1]
            agent2_pos = [agent2_pos[0]+x_shift, agent2_pos[1]+y_shift]
            agent2.setPos(agent2_pos, log=True)
            agent2_indicator_text.setPos(agent2_pos, log=True)

            win.flip()
            core.wait(1)

            agent2.image = agent2_imgs['down']
            win.flip()
            continueRoutine = False
      End Routine:
        agent2_indicator_text.color = "black"
    TextComponent instr_comp_turn_egg_self
      color = black
      letterHeight = 0.04
      pos = (0, -.425)
      startVal [time (s)] = 0
      text [set every repeat] = $this_comp_instr_txt
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  Routine agent1_egg_other
    KeyboardComponent resp_agent1_2
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = nothing
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    TextComponent instr_agent1_2
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0
      text [set every repeat] = $PLAYER_TURN_TXT
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    CodeComponent change_agent1_2
      Code Type = Auto->JS
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      Begin Experiment:
        count2 = 0
      Begin Routine:
        agent1_jitter = np.random.uniform(1,1.5)
        thisExp.addData('agent1_jitter', agent1_jitter)

        instr_agent1_2.bold = True
        agent1_indicator_text.color = "red"

        # remove possible move if adjacent to another agent
        count2 += 1
        if count2 == 1:
            possiblemoves = [right_key]
            this_instr_txt = f'Your turn. Press the {right_key.replace("num_","")} key to move right'
        elif count2 == 2:
            possiblemoves = [up_key]
            this_instr_txt = f'Your turn.\nPress the {up_key.replace("num_","")} key to move up'

        this_agent1_move = ''
      Each Frame:
        current_agent1_keyresp = resp_agent1_2.getKeys(clear=True)
        if resp_agent1_2.keys == 'escape':
            core.quit()
        if current_agent1_keyresp:
             if resp_agent1_2.keys in possiblemoves:
                if resp_agent1_2.keys == 'h' or resp_agent1_2.keys == 'num_4':
                    this_agent1_move = 'left'
                    agent1_pos = [agent1_pos[0]-.15, agent1_pos[1]]
                    agent1.image = agent1_imgs['left']

                    win.flip()
                elif resp_agent1_2.keys == 'k' or resp_agent1_2.keys == 'num_6':
                    this_agent1_move = 'right'
                    agent1_pos = [agent1_pos[0]+.15, agent1_pos[1]]
                    agent1.image = agent1_imgs['right']

                    win.flip()
                elif resp_agent1_2.keys == 'u' or resp_agent1_2.keys == 'num_8':
                    this_agent1_move = 'up'
                    agent1_pos = [agent1_pos[0], agent1_pos[1]+.15]
                    agent1.image = agent1_imgs['up']

                    win.flip()
                elif resp_agent1_2.keys == 'n' or resp_agent1_2.keys == 'num_2':
                    this_agent1_move = 'down'
                    agent1_pos = [agent1_pos[0], agent1_pos[1]-.15]
                    agent1.image = agent1_imgs['down']

                    win.flip()
                else:
                    this_agent1_move = 'null'
                    agent1.image = agent1_imgs['down']

                    win.flip()

                agent1.setPos(agent1_pos, log=True)
                agent1_indicator_text.setPos(agent1_pos, log=True)

                if agent1_pos[0] > .3:
                    egg_right.setAutoDraw(False)
                if agent1_pos[0] < -.3:
                    egg_left.setAutoDraw(False)
                win.flip()
                continueRoutine = False
      End Routine:
        if this_agent1_move in ['up','down','left','right']:
            thisExp.addData(f'agent1_action', this_agent1_move)
        else:
            thisExp.addData(f'agent1_action', 'null')

        core.wait(agent1_jitter)
        agent1.image = agent1_imgs['down']
        win.flip()

        agent1_indicator_text.color = "black"
    TextComponent instr_display_egg_self_2
      color = black
      letterHeight = 0.04
      pos = (0, -.425)
      startVal [time (s)] = 0
      text [set every repeat] = $this_instr_txt
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  Routine egg_other_end
    TextComponent end_txt_egg_self_2
      letterHeight = 0.04
      startVal [time (s)] = 2
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      text:
        This time, the other player got to the egg before you. This earned them 100 points, but you did not receive any additional points. You both started with 150 points, but took 2 turns (so you lost 20 points). In total, the other player received 230 points, but you only received 130 points.

        On some rounds, you may both be able to collect one of the eggs. Let's see an example of how that could play out.

        Press RIGHT ARROW to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'right','k'
      forceEndRoutine = True
      startVal [time (s)] = 5
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    CodeComponent undraw_grid_2
      Code Type = Auto->JS
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      Begin Routine:
        GridWorldComponents = [b_0_2, b_0_1, b_3_0, b_2_2, b_1_2, b_2_1, b_2_neg1, b_2_neg2, b_2_0, b_1_neg2, b_1_0, b_0_0, b_neg1_0, b_neg1_2, b_neg1_neg2, b_neg2_0, b_neg2_1, b_neg2_neg1, b_neg2_neg2, b_neg2_2, b_neg3_0, b_0_neg1, b_0_neg2, egg_left, egg_right]

        for thisComponent in GridWorldComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(False)

        AgentsComponents = [chick1, agent1, agent2]

        for thisComponent in AgentsComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(False)
      End Routine:
        GridWorldComponents = [b_0_2, b_0_1, b_3_0, b_2_2, b_1_2, b_2_1, b_2_neg1, b_2_neg2, b_2_0, b_1_neg2, b_1_0, b_0_0, b_neg1_0, b_neg1_2, b_neg1_neg2, b_neg2_0, b_neg2_1, b_neg2_neg1, b_neg2_neg2, b_neg2_2, b_neg3_0, b_0_neg1, b_0_neg2, egg_left, egg_right]

        for thisComponent in GridWorldComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(True)

        AgentsComponents = [agent1, agent2]

        for thisComponent in AgentsComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(True)
    CodeComponent reposition_3
      Code Type = Auto->JS
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      End Routine:
        agent1_pos = [-.3, 0]
        agent2_pos = [.3, 0]
        chick1_pos = [0, -.3]

        chick1.setPos(chick1_pos, log=True)
        agent1.setPos(agent1_pos, log=True)
        agent2.setPos(agent2_pos, log=True)
    CodeComponent draw_trial_txt_3
      Code Type = Auto->JS
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      End Routine:
        trial_text = visual.TextStim(win=win, name='trial_text',
            text='',
            font='Open Sans',
            pos=(.55, .35), height=0.04, wrapWidth=None, ori=0.0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-1.0);
    CodeComponent player_indicators_3
      Code Type = Auto->JS
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      Begin Routine:
        agent1_indicator_text.setAutoDraw(False)
        agent2_indicator_text.setAutoDraw(False)
      End Routine:
        agent1_indicator_text.setPos(agent1_pos)
        agent1_indicator_text.setAutoDraw(True)
        agent2_indicator_text.setPos(agent2_pos)
        agent2_indicator_text.setAutoDraw(True)
    TextComponent end_text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $round_complete_text2
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    CodeComponent disp_points_2
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['player'] == '1':
            agent1_pts2 = (150-20)
            agent2_pts2 = 100+(150-20)
        elif expInfo['player'] == '2':
            agent1_pts2 = 100+(150-20)
            agent2_pts2 = (150-20)
        agent1_complete_text2 = f'PLAYER 1:\n+{agent1_pts2} points\n\n'
        agent2_complete_text2 = f'PLAYER 2:\n+{agent2_pts2} points'
        round_complete_text2 = f'ROUND COMPLETED\n\n' + agent1_complete_text2 + agent2_complete_text2
  Routine agent1_egg_both
    KeyboardComponent resp_agent1_3
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = nothing
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    TextComponent instr_agent1_3
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0
      text [set every repeat] = $PLAYER_TURN_TXT
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    CodeComponent change_agent1_3
      Code Type = Auto->JS
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      Begin Routine:
        agent1_jitter = np.random.uniform(1,1.5)
        thisExp.addData('agent1_jitter', agent1_jitter)

        instr_agent1_3.bold = True
        agent1_indicator_text.color = "red"

        # remove possible move if adjacent to another agent
        possiblemoves = [left_key]
        this_instr_txt = f'Your turn. Both of you can collect an egg this time.\nPress the {left_key.replace("num_","")} key to move left to collect the egg'

        this_agent1_move = ''
      Each Frame:
        current_agent1_keyresp = resp_agent1_3.getKeys(clear=True)
        if resp_agent1_3.keys == 'escape':
            core.quit()
        if current_agent1_keyresp:
             if resp_agent1_3.keys in possiblemoves:
                if resp_agent1_3.keys == 'h' or resp_agent1_3.keys == 'num_4':
                    this_agent1_move = 'left'
                    agent1_pos = [agent1_pos[0]-.15, agent1_pos[1]]
                    agent1.image = agent1_imgs['left']

                    win.flip()
                elif resp_agent1_3.keys == 'k' or resp_agent1_3.keys == 'num_6':
                    this_agent1_move = 'right'
                    agent1_pos = [agent1_pos[0]+.15, agent1_pos[1]]
                    agent1.image = agent1_imgs['right']

                    win.flip()
                elif resp_agent1_3.keys == 'u' or resp_agent1_3.keys == 'num_8':
                    this_agent1_move = 'up'
                    agent1_pos = [agent1_pos[0], agent1_pos[1]+.15]
                    agent1.image = agent1_imgs['up']

                    win.flip()
                elif resp_agent1_3.keys == 'n' or resp_agent1_3.keys == 'num_2':
                    this_agent1_move = 'down'
                    agent1_pos = [agent1_pos[0], agent1_pos[1]-.15]
                    agent1.image = agent1_imgs['down']

                    win.flip()
                else:
                    this_agent1_move = 'null'
                    agent1.image = agent1_imgs['down']

                    win.flip()

                agent1.setPos(agent1_pos, log=True)
                agent1_indicator_text.setPos(agent1_pos, log=True)

                if agent1_pos[0] > .3:
                    egg_right.setAutoDraw(False)
                if agent1_pos[0] < -.3:
                    egg_left.setAutoDraw(False)
                win.flip()
                continueRoutine = False
      End Routine:
        if this_agent1_move in ['up','down','left','right']:
            thisExp.addData(f'agent1_action', this_agent1_move)
        else:
            thisExp.addData(f'agent1_action', 'null')

        core.wait(agent1_jitter)
        agent1.image = agent1_imgs['down']
        win.flip()

        agent1_indicator_text.color = "black"
    TextComponent instr_display_egg_self_3
      color = black
      letterHeight = 0.04
      pos = (0, -.425)
      startVal [time (s)] = 0
      text [set every repeat] = $this_instr_txt
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  Routine comp_egg_both
    TextComponent instr_computer_3
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0
      text [set every repeat] = $COMP_TURN_TXT
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    CodeComponent change_computer_3
      Code Type = Auto->JS
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      Begin Routine:
        instr_computer_3.bold = True
        agent2_indicator_text.color = "red"
        timer3 = core.Clock()

        x_shift = .15
        y_shift = 0
        this_comp_move_3 = 'right'
        this_comp_instr_txt = 'It is the other player\'s turn'
      Each Frame:
        if timer3.getTime()>2:

            agent2.image = agent2_imgs[this_comp_move_3]
            agent2_pos = [agent2_pos[0]+x_shift, agent2_pos[1]+y_shift]
            agent2.setPos(agent2_pos, log=True)
            agent2_indicator_text.setPos(agent2_pos, log=True)

            if agent2_pos[0] > .3:
                egg_right.setAutoDraw(False)
            if agent2_pos[0] < -.3:
                egg_left.setAutoDraw(False)
            win.flip()
            core.wait(1)

            agent2.image = agent2_imgs['down']
            win.flip()
            continueRoutine = False
      End Routine:
        agent2_indicator_text.color = "black"
    TextComponent instr_comp_turn_egg_both
      color = black
      letterHeight = 0.04
      pos = (0, -.425)
      startVal [time (s)] = 0
      text [set every repeat] = $this_comp_instr_txt
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  Routine catch_chick_start
    TextComponent end_txt_catch_chick
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You can also earn points if you catch the chicken. However, the chicken will often move away from players. You and the other player must work together to catch it! You can do this by moving to two spaces that are right next to the chicken.

        If you catch a chicken, you will both collect the eggs that it lays and split the amount between the two of you. This is DOUBLE the amount of points from collecting an egg, but it is much more difficult. Let's see an example of how this might play out.

        Press RIGHT ARROW to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'right','k'
      forceEndRoutine = True
      startVal [time (s)] = 3
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    CodeComponent draw_grid_4
      Code Type = Auto->JS
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      End Routine:
        GridWorldComponents = [b_0_2, b_0_1, b_3_0, b_2_2, b_1_2, b_2_1, b_2_neg1, b_2_neg2, b_2_0, b_1_neg2, b_1_0, b_0_0, b_neg1_0, b_neg1_2, b_neg1_neg2, b_neg2_0, b_neg2_1, b_neg2_neg1, b_neg2_neg2, b_neg2_2, b_neg3_0, b_0_neg1, b_0_neg2, egg_left, egg_right]

        for thisComponent in GridWorldComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(True)

        AgentsComponents = [chick1, agent1, agent2]

        for thisComponent in AgentsComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(True)
    CodeComponent reposition_4
      Code Type = Auto->JS
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      End Routine:
        agent1_pos = [0,-.15]
        agent2_pos = [-.3, .3]
        chick1_pos = [-.3,0]

        chick1.setPos(chick1_pos, log=True)
        agent1.setPos(agent1_pos, log=True)
        agent2.setPos(agent2_pos, log=True)
    CodeComponent draw_trial_txt_4
      Code Type = Auto->JS
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      End Routine:
        trial_text = visual.TextStim(win=win, name='trial_text',
            text='',
            font='Open Sans',
            pos=(.55, .35), height=0.04, wrapWidth=None, ori=0.0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-1.0);
    CodeComponent player_indicators_4
      Code Type = Auto->JS
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      End Routine:
        agent1_indicator_text.setPos(agent1_pos)
        agent1_indicator_text.setAutoDraw(True)
        agent2_indicator_text.setPos(agent2_pos)
        agent2_indicator_text.setAutoDraw(True)
  Routine egg_both_end
    TextComponent end_txt_egg_self_4
      letterHeight = 0.04
      startVal [time (s)] = 2
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      text:
        This time, both you and the other player collected an egg, which means that you both earned 100 points. You both started with 150 points, but took 1 turn (so you lost 10 points). In total, you both received 240 points.

        Remember that either one of you will be able to collect an egg or both of you depending on how you play the game.

        Press RIGHT ARROW to continue.
    KeyboardComponent key_resp_7
      allowedKeys = 'right','k'
      forceEndRoutine = True
      startVal [time (s)] = 5
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    CodeComponent undraw_grid_4
      Code Type = Auto->JS
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      Begin Routine:
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    TextComponent end_text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $round_complete_text3
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        agent1_indicator_text.setAutoDraw(False)
        agent2_indicator_text.setAutoDraw(False)
    CodeComponent disp_points_3
      Code Type = Auto->JS
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      Begin Experiment:

        agent1_pts3 = 100+(150-10)
        agent2_pts3 = 100+(150-10)
        agent1_complete_text3 = f'PLAYER 1:\n+{agent1_pts3} points\n\n'
        agent2_complete_text3 = f'PLAYER 2:\n+{agent2_pts3} points'
        round_complete_text3 = f'ROUND COMPLETED\n\n' + agent1_complete_text3 + agent2_complete_text3
  Routine agent_catch_chick
    KeyboardComponent resp_agent1_4
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = nothing
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    TextComponent instr_agent1_4
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0
      text [set every repeat] = $PLAYER_TURN_TXT
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    CodeComponent change_agent1_4
      Code Type = Auto->JS
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      Begin Experiment:
        count4 = 0
      Begin Routine:
        agent1_jitter = np.random.uniform(1,1.5)
        thisExp.addData('agent1_jitter', agent1_jitter)

        instr_agent1_4.bold = True
        agent1_indicator_text.color = "red"

        # remove possible move if adjacent to another agent
        count4 += 1
        if count4 == 1:
            possiblemoves = [down_key]
            this_instr_txt = f'Your turn. Press the {down_key.replace("num_","")} key to move down'
        elif count4 == 2:
            possiblemoves = [left_key]
            this_instr_txt = f'Your turn. Press the {left_key.replace("num_","")} key to move left'
        elif count4 == 3:
            possiblemoves = [stay_key]
            this_instr_txt = f'You arrived to the chicken first. Press the {stay_key.replace("num_","")} key to stay in place to wait for the other player'

        this_agent1_move = ''
      Each Frame:
        current_agent1_keyresp = resp_agent1_4.getKeys(clear=True)
        if resp_agent1_4.keys == 'escape':
            core.quit()
        if current_agent1_keyresp:
             if resp_agent1_4.keys in possiblemoves:
                if resp_agent1_4.keys == 'h' or resp_agent1_4.keys == 'num_4':
                    this_agent1_move = 'left'
                    agent1_pos = [agent1_pos[0]-.15, agent1_pos[1]]
                    agent1.image = agent1_imgs['left']

                    win.flip()
                elif resp_agent1_4.keys == 'k' or resp_agent1_4.keys == 'num_6':
                    this_agent1_move = 'right'
                    agent1_pos = [agent1_pos[0]+.15, agent1_pos[1]]
                    agent1.image = agent1_imgs['right']

                    win.flip()
                elif resp_agent1_4.keys == 'u' or resp_agent1_4.keys == 'num_8':
                    this_agent1_move = 'up'
                    agent1_pos = [agent1_pos[0], agent1_pos[1]+.15]
                    agent1.image = agent1_imgs['up']

                    win.flip()
                elif resp_agent1_4.keys == 'n' or resp_agent1_4.keys == 'num_2':
                    this_agent1_move = 'down'
                    agent1_pos = [agent1_pos[0], agent1_pos[1]-.15]
                    agent1.image = agent1_imgs['down']

                    win.flip()
                else:
                    this_agent1_move = 'null'
                    agent1.image = agent1_imgs['down']

                    win.flip()

                agent1.setPos(agent1_pos, log=True)
                agent1_indicator_text.setPos(agent1_pos, log=True)

                if agent1_pos[0] > .3:
                    egg_right.setAutoDraw(False)
                if agent1_pos[0] < -.3:
                    egg_left.setAutoDraw(False)
                win.flip()
                continueRoutine = False
      End Routine:
        if this_agent1_move in ['up','down','left','right']:
            thisExp.addData(f'agent1_action', this_agent1_move)
        else:
            thisExp.addData(f'agent1_action', 'null')

        core.wait(agent1_jitter)
        agent1.image = agent1_imgs['down']
        win.flip()

        agent1_indicator_text.color = "black"
    TextComponent instr_display_egg_self_4
      color = black
      letterHeight = 0.04
      pos = (0, -.425)
      startVal [time (s)] = 0
      text [set every repeat] = $this_instr_txt
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  Routine comp_catch_chick
    TextComponent instr_computer_4
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0
      text [set every repeat] = $COMP_TURN_TXT
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    CodeComponent change_computer_4
      Code Type = Auto->JS
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      Begin Experiment:
        count4_comp = 0
      Begin Routine:
        instr_computer_4.bold = True
        agent2_indicator_text.color = "red"
        timer4 = core.Clock()

        count4_comp += 1
        if count4_comp == 1:
            # down
            x_shift = 0
            y_shift = -.15
            this_comp_move_4 = 'down'
            this_comp_instr_txt = 'It is the other player\'s turn now'
        elif count4_comp == 2:
            # down
            x_shift = 0
            y_shift = -.15
            this_comp_move_4 = 'down'
            this_comp_instr_txt = 'It is the other player\'s turn now, but they can\'t catch the chicken yet'
        elif count4_comp == 3:
            # down
            x_shift = 0
            y_shift = -.15
            this_comp_move_4 = 'down'
            this_comp_instr_txt = 'Now the other player can catch the chicken with you'
      Each Frame:
        if timer4.getTime()>2:

            agent2.image = agent2_imgs[this_comp_move_4]
            agent2_pos = [agent2_pos[0]+x_shift, agent2_pos[1]+y_shift]
            agent2.setPos(agent2_pos, log=True)
            agent2_indicator_text.setPos(agent2_pos, log=True)

            win.flip()
            core.wait(1)

            agent2.image = agent2_imgs['down']
            win.flip()
            continueRoutine = False
      End Routine:
        this_comp_instr_txt = 'You caught the chicken'
        win.flip()
        agent2_indicator_text.color = "black"
    TextComponent instr_comp_turn_egg_self_2
      color = black
      letterHeight = 0.04
      pos = (0, -.425)
      startVal [time (s)] = 0
      text [set every repeat] = $this_comp_instr_txt
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  Routine end_tutorial
    TextComponent text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You will next play multiple rounds of the game with another person.

        In the real game, each player also only has 6 seconds to select a move during your turn. If you do not choose a move after 6 seconds, you will stay in the same space.

        Thanks and please let the researcher know if you have any questions. Have fun!
    KeyboardComponent key_resp_9
      allowedKeys = 'right','k'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine catch_chick_end
    TextComponent end_txt_egg_self_5
      letterHeight = 0.04
      startVal [time (s)] = 2
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      text:
        You and the other player caught a chicken, which means that you each earned 200 points (400 total). You both started with 150 points, but took 3 turns (so you lost 30 points). In total, you both received 320 points.

        Remember you need to cooperate with the other player in order to catch the chicken because it will always try to escape the players. Be careful though because you lose 10 points for every turn you take.

        Press RIGHT ARROW to continue.
    KeyboardComponent key_resp_8
      allowedKeys = 'right','k'
      forceEndRoutine = True
      startVal [time (s)] = 5
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    CodeComponent undraw_grid_5
      Code Type = Auto->JS
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      Begin Routine:
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    TextComponent end_text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $round_complete_text4
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        agent1_indicator_text.setAutoDraw(False)
        agent2_indicator_text.setAutoDraw(False)
    CodeComponent disp_points_4
      Code Type = Auto->JS
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      Begin Experiment:
        agent1_pts4 = 200+(150-30)
        agent2_pts4 = 200+(150-30)
        agent1_complete_text4 = f'PLAYER 1:\n+{agent1_pts4} points\n\n'
        agent2_complete_text4 = f'PLAYER 2:\n+{agent2_pts4} points'
        round_complete_text4 = f'ROUND COMPLETED\n\n' + agent1_complete_text4 + agent2_complete_text4
  Routine movement_keys
    TextComponent text_3
      color = black
      letterHeight = 0.04
      pos = (0, -.45)
      startVal [time (s)] = 5
      text [set every repeat] = Press RIGHT ARROW to continue.
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    KeyboardComponent key_resp_10
      allowedKeys = 'right','k'
      forceEndRoutine = True
      startVal [time (s)] = 5
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    TextComponent text_up
      letterHeight = 0.03
      pos = (0, .15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $moving_key_instr_txt['up']
      wrapWidth = .2
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    TextComponent text_down
      letterHeight = 0.03
      pos = (0, -.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $moving_key_instr_txt['down']
      wrapWidth = .2
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    TextComponent text_stay
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $moving_key_instr_txt['stay']
      wrapWidth = .2
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    TextComponent text_right
      letterHeight = 0.03
      pos = (.3, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $moving_key_instr_txt['right']
      wrapWidth = .2
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    TextComponent text_left
      letterHeight = 0.03
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $moving_key_instr_txt['left']
      wrapWidth = .2
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    TextComponent movement_instr_txt
      letterHeight = 0.04
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = You will move around on the screen using the following keys. Please find these on your keyboard now.
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Flow
  Routine start_exp
  Routine overview
  Routine movement_keys
  Routine egg_self_start
  LoopInitiator egg_self_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    Routine agent1_egg_self
    Routine comp_egg_self
  LoopTerminator egg_self_loop
  Routine egg_self_end
  LoopInitiator egg_other_loop loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine agent1_egg_other
    Routine comp_egg_other
  LoopTerminator egg_other_loop
  Routine egg_other_end
  LoopInitiator egg_both_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine comp_egg_both
    Routine agent1_egg_both
  LoopTerminator egg_both_loop
  Routine egg_both_end
  Routine catch_chick_start
  LoopInitiator catch_chick_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    Routine move_chick1
    Routine agent_catch_chick
    Routine comp_catch_chick
  LoopTerminator catch_chick_loop
  Routine catch_chick_end
  Routine end_tutorial
